PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 3
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = grating_test_demo_TEMPLATE
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('LEFT_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine test_1
    RoutineSettingsComponent test_1
      disabled = True
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    GratingComponent grating_1
      mask = gauss
      phase = 0.5
      pos = (-0.37, 0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_2
      mask = gauss
      phase = 0.5
      pos = (0.37, 0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_3
      mask = gauss
      phase = 0.5
      pos = (-0.37, -0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_4
      mask = gauss
      phase = 0.5
      pos = (0.37, -0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4'
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent label_1
      letterHeight = 0.05
      pos = (-0.37, 0.1)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent label_2
      letterHeight = 0.05
      pos = (0.37, 0.1)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent label_3
      letterHeight = 0.05
      pos = (-0.37, -0.4)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent label_4
      letterHeight = 0.05
      pos = (0.37, -0.4)
      startVal [time (s)] = 0.0
      text = 4
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    MouseComponent mouse_2
      clickable = grating_1,grating_2,grating_3,grating_4
      correctAns = grating_1
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 2
      nVertices = 4
      ori = 0
      pos = (-0.37, 0.25)
      save = every look
      shape = circle
      size = [0.5,0.5]
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine wait
    RoutineSettingsComponent wait
      disabled = True
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    TextComponent center
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine test_2
    RoutineSettingsComponent test_2
      disabled = True
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    GratingComponent grating_5
      mask = gauss
      phase = 0.5
      pos = (-0.37, 0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_6
      mask = gauss
      phase = 0.5
      pos = (0.37, 0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_7
      mask = gauss
      phase = 0.5
      pos = (-0.37, -0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_8
      mask = gauss
      phase = 0.5
      pos = (0.37, -0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4'
      correctAns = 2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent label_5
      letterHeight = 0.05
      pos = (-0.37, 0.1)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent label_6
      letterHeight = 0.05
      pos = (0.37, 0.1)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent label_7
      letterHeight = 0.05
      pos = (-0.37, -0.4)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent label_8
      letterHeight = 0.05
      pos = (0.37, -0.4)
      startVal [time (s)] = 0.0
      text = 4
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    MouseComponent mouse_3
      clickable = grating_5,grating_6,grating_7,grating_8
      correctAns = grating_6
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    EyetrackerRecordComponent etRecord_2
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    RegionOfInterestComponent roi_2
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 2
      nVertices = 4
      ori = 0
      pos = (0.37, 0.25)
      save = every look
      shape = circle
      size = [0.5,0.5]
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine test_3
    RoutineSettingsComponent test_3
      disabled = True
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    GratingComponent grating_9
      mask = gauss
      phase = 0.5
      pos = (-0.37, 0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_10
      mask = gauss
      phase = 0.5
      pos = (0.37, 0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_11
      mask = gauss
      phase = 0.5
      pos = (-0.37, -0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_12
      mask = gauss
      phase = 0.5
      pos = (0.37, -0.25)
      sf = 10
      size = 0.3
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys = '1','2','3','4'
      correctAns = 3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent label_9
      letterHeight = 0.05
      pos = (-0.37, 0.1)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent label_10
      letterHeight = 0.05
      pos = (0.37, 0.1)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent label_11
      letterHeight = 0.05
      pos = (-0.37, -0.4)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent label_12
      letterHeight = 0.05
      pos = (0.37, -0.4)
      startVal [time (s)] = 0.0
      text = 4
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    MouseComponent mouse_4
      clickable = grating_9,grating_10,grating_11,grating_12
      correctAns = grating_11
      disabled = True
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    EyetrackerRecordComponent etRecord_3
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    RegionOfInterestComponent roi_3
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 2
      nVertices = 4
      ori = 0
      pos = (-0.37, -0.25)
      save = every look
      shape = circle
      size = [0.5,0.5]
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine Introduction
    RoutineSettingsComponent Introduction
      disabled = True
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    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = $"Experimento en fase beta.\n"
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    ImageComponent image_biobizkaia
      image = C:/Users/akoun/Downloads/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.6, 0.4)
      size = [0.4,0.2]
      startVal [time (s)] = 0.0
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    ImageComponent image_comp_neur
      image = C:/Users/akoun/Downloads/compneuro_horizontal.png
      pos = (0.5, 0.4)
      size = [0.5,0.15]
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine look_at_the_center
    RoutineSettingsComponent look_at_the_center
      disabled = True
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    DotsComponent dots
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 8
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 2
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    EyetrackerRecordComponent etRecord_4
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
    RegionOfInterestComponent roi_4
      anchor = center
      debug = False
      endRoutineOn = look away
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine looking_at_forbidden_region
    RoutineSettingsComponent looking_at_forbidden_region
      disabled = True
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    PolygonComponent polygon_2
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    EyetrackerRecordComponent etRecord_5
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
    RegionOfInterestComponent roi_5
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine background_test
    RoutineSettingsComponent background_test
      disabled = True
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  Routine look_at_the_center_inside_stim
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  Routine look_at_the_center_2
    RoutineSettingsComponent look_at_the_center_2
      disabled = True
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    DotsComponent dots_2
      coherence = 1.0
      dir = 0.0
      dotLife = 30
      dotSize = 15
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.5
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.01
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord_6
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
    RegionOfInterestComponent roi_6
      anchor = center
      debug = False
      endRoutineOn = look away
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      saveStartStop = False
      shape = circle
      size = 0.5
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
    TextComponent text_3
      letterHeight = 0.05
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        no_look_time = 0
      Each Frame:
        text_3.text = str(no_look_time)
      End Routine:
        no_look_time += 1
        print(no_look_time)
  Routine looking_at_forbidden_region_2
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    PolygonComponent polygon_4
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    EyetrackerRecordComponent etRecord_7
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
    RegionOfInterestComponent roi_7
      anchor = center
      debug = False
      endRoutineOn = look at
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine looking_at_forbidden_region_3
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        no_look_time += 1
  Routine BM_show_stimuli
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # Crear una lista con todas las letras del alfabeto
        alfabeto = [chr(i) for i in range(97, 123)]  # Genera letras de 'a' a 'z'
      Begin Routine:
        #global letra_aleatoria  # Indica que vas a usar la variable global
        letra_aleatoria = random.choice(alfabeto)  # Asigna un valor a la variable global

        print(letra_aleatoria)

        stimuli_show.text = str(letra_aleatoria)
      Each Frame:
        stimuli_show.text = str(letra_aleatoria)
    TextComponent stimuli_show
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine BM_hide_and_seek_stimuli
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        #x_pos = random.uniform(-0.5, 0.5)  # Genera una posición x aleatoria entre -1 y 1
        #y_pos = random.uniform(-0.5, 0.5)  # Genera una posición y aleatoria entre -1 y 1
        #print([x_pos, y_pos])
      Begin Routine:
        #global letra_aleatoria  # Indica que vas a usar la variable global

        x_pos = random.uniform(-0.5, 0.5)  # Genera una posición x aleatoria entre -1 y 1
        y_pos = random.uniform(-0.5, 0.5)  # Genera una posición y aleatoria entre -1 y 1
        print([x_pos, y_pos])
        stimuli.text = str(letra_aleatoria)
      Each Frame:
        stimuli.text = str(letra_aleatoria)
      End Routine:
        #x_pos = random.uniform(-0.5, 0.5)  # Genera una posición x aleatoria entre -1 y 1
        #y_pos = random.uniform(-0.5, 0.5)  # Genera una posición y aleatoria entre -1 y 1
        #print([x_pos, y_pos])
    TextComponent stimuli
      letterHeight = 0.05
      pos [set every repeat] = [x_pos, y_pos]
      startVal [time (s)] = 0.0
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    DotsComponent dots_3
      coherence = 1.0
      dir = 0.0
      dotLife = 10
      dotSize = 30
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = 2
      nDots = 300
      noiseDots = direction
      opacity [set every frame] = 1 - t / 10 if 0 <= t <= 10 else 0
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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    MouseComponent mouse_5
      clickable = stimuli
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  Routine test_1
  Routine wait
  Routine test_2
  Routine wait
  Routine test_3
  Routine wait
  Routine background_test
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine look_at_the_center
    Routine looking_at_forbidden_region
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine look_at_the_center_2
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine BM_show_stimuli
    Routine BM_hide_and_seek_stimuli
  LoopTerminator trials_3
