PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FFT_MOL_test
  keyboardBackend = ioHub
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent metrics
      letterHeight = 0.05
      pos = (0.5, 0.4)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      initVal = 20
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = slider
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      labels:
        (1,5,10,15,20,25,30
        )
      ticks:
        (1,5,10,15,20,25,30
        )
    CodeComponent frecuency_daemon
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Each Frame:
        slider_value = slider.getRating()
        if slider_value is not None:
            frames_por_ciclo = int((frecuencia_monitor / slider_value) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        else:
            opacidad = 1

        polygon.opacity = opacidad
    CodeComponent on_screen_metrics_daemon
      Code Type = Auto->JS
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      Each Frame:
        slider_value = slider.getRating()
        if slider_value is not None:
            metrics.text = '%.1f HZ' % slider_value
        #frecuencia_parpadeo
Flow
  Routine trial
