PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = gollin_figure_test
  keyboardBackend = ioHub
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Routines
  Routine wait
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = wait_time
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    CodeComponent code_3
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        dots_no = dots_no * 0.8
  Routine trial_2
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    ImageComponent image_2
      image [set every repeat] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        iterations = 0
        size = 1
        dots_no = 25000
      Begin Routine:
        iterations +=1
        print("------------------------------------")
        print("Loading \"", file ,"\" file")
        print("Iteration number "+ str(iterations) + ".")
        print("Dots number: "+ str(dots_no) + ".")
        print("Dots size: "+ str(size) + ".")
        print("------------------------------------")
      End Routine:
        dots_no = dots_no * 0.8
        #size = size * 0.8
    DotsComponent dots_2
      coherence [set every repeat] = 1.0
      dir [set every repeat] = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_2
      noiseDots = position
      refreshDots = repeat
      saveStartStop = False
      signalDots = different
      speed [set every repeat] = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine trial_1
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    ImageComponent image
      image [set every repeat] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        iterations = 0
        size = 20
        #dots_no = 25000
      Begin Routine:
        iterations +=1
        print("------------------------------------")
        print("Loading \"", file ,"\" file")
        print("Iteration number "+ str(iterations) + ".")
        #print("Dots number: "+ str(dots_no) + ".")
        print("Dots size: "+ str(size) + ".")
        print("------------------------------------")
        dots.dots_no = 50
      End Routine:
        #dots_no = dots_no * 0.8
        size = size * 0.5
    DotsComponent dots
      coherence [set every repeat] = 1.0
      dir [set every repeat] = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_1
      noiseDots = position
      refreshDots = repeat
      saveStartStop = False
      signalDots = different
      speed [set every repeat] = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine trial_3
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    ImageComponent image_3
      image [set every repeat] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        iterations = 0
        size = 1
        dots_no = 25000
      Begin Routine:
        iterations +=1
        print("------------------------------------")
        print("Loading \"", file ,"\" file")
        print("Iteration number "+ str(iterations) + ".")
        print("Dots number: "+ str(dots_no) + ".")
        print("Dots size: "+ str(size) + ".")
        print("------------------------------------")
      End Routine:
        dots_no = dots_no * 0.8
        #size = size * 0.8
    DotsComponent dots_3
      coherence [set every repeat] = 1.0
      dir [set every repeat] = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_3
      noiseDots = position
      refreshDots = repeat
      saveStartStop = False
      signalDots = different
      speed [set every repeat] = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine trial_4
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    ImageComponent image_4
      image [set every repeat] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      syncScreenRefresh = False
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        iterations = 0
        size = 1
        dots_no = 25000
      Begin Routine:
        iterations +=1
        print("------------------------------------")
        print("Loading \"", file ,"\" file")
        print("Iteration number "+ str(iterations) + ".")
        print("Dots number: "+ str(dots_no) + ".")
        print("Dots size: "+ str(size) + ".")
        print("------------------------------------")
      End Routine:
        dots_no = dots_no * 0.8
        #size = size * 0.8
    DotsComponent dots_4
      coherence [set every repeat] = 1.0
      dir [set every repeat] = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_4
      noiseDots = position
      refreshDots = repeat
      saveStartStop = False
      signalDots = different
      speed [set every repeat] = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine trial_5
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  Routine trial_6
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  Routine trial_7
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    ImageComponent image_7
      image [set every repeat] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        iterations = 0
        size = 1
        dots_no = 25000
      Begin Routine:
        iterations +=1
        print("------------------------------------")
        print("Loading \"", file ,"\" file")
        print("Iteration number "+ str(iterations) + ".")
        print("Dots number: "+ str(dots_no) + ".")
        print("Dots size: "+ str(size) + ".")
        print("------------------------------------")
      End Routine:
        dots_no = dots_no * 0.8
        #size = size * 0.8
    DotsComponent dots_7
      coherence [set every repeat] = 1.0
      dir [set every repeat] = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_7
      noiseDots = position
      refreshDots = repeat
      saveStartStop = False
      signalDots = different
      speed [set every repeat] = 0
      startVal [time (s)] = 0.0
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  Routine config
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    CodeComponent exp_configuration
      Code Type = Auto->JS
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      Begin Experiment:
        time= 1
        wait_time = 0.5
        dots_no_1 = 24000
        dots_no_2 = 20000
        dots_no_3 = 16000
        dots_no_4 = 12000
        dots_no_5 = 8000
        dots_no_6 = 4000
        dots_no_7 = 1
      Begin Routine:
        time= 1
        wait_time = 0.5
        dots_no_1 = 24000
        dots_no_2 = 20000
        dots_no_3 = 16000
        dots_no_4 = 12000
        dots_no_5 = 8000
        dots_no_6 = 4000
        dots_no_7 = 1
Flow
  Routine config
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images/images.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('file', 'images/cat.png')]),
      OrderedDict([('file', 'images/elephant.png')]),
      OrderedDict([('file', 'images/mouse.png')])]
    Routine trial_1
    Routine wait
    Routine trial_2
    Routine wait
    Routine trial_3
    Routine wait
    Routine trial_4
    Routine wait
    Routine trial_5
    Routine wait
    Routine trial_6
    Routine wait
    Routine trial_7
    Routine wait
  LoopTerminator trials
