PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = gollin_figure_test_v2
  keyboardBackend = ioHub
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Routines
  Routine trial_1
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    ImageComponent image
      image [set every repeat] = $file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    DotsComponent dots_1
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_1
      noiseDots = position
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    DotsComponent dots_2
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_2
      noiseDots = position
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    DotsComponent dots_3
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_3
      noiseDots = position
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    DotsComponent dots_4
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_4
      noiseDots = position
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    DotsComponent dots_5
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_5
      noiseDots = position
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    DotsComponent dots_6
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_6
      noiseDots = position
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    DotsComponent dots_7
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = -1
      dotSize = 20
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = dots_no_7
      noiseDots = position
      refreshDots = none
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        time = 1
        dots_no_1 = 3500
        dots_no_2 = 3500
        dots_no_3 = 3500
        dots_no_4 = 3500
        dots_no_5 = 3500
        dots_no_6 = 3500
        dots_no_7 = 3500
      Begin Experiment:
        estimulos = [dots_1, dots_2, dots_3, dots_4, dots_5, dots_6, dots_7]
      Begin Routine:
        if image_iteration == 0:
            print("------------------------------------")
            print("Image iteration: " + str(image_iteration))
            print("Setting up opacity of all stimulis to 100%...")
            print("------------------------------------")
            for estimulo in estimulos:
                estimulo.opacity = 1.0
            image_iteration += 1

        if image_iteration < 8: # Todos los filtros
            estimulo_seleccionado = estimulos[image_iteration % len(estimulos)]
            estimulo_seleccionado.opacity = 0.0
            print("------------------------------------")
            print("Image iteration: " + str(image_iteration))
            print("Removing dots "+ str(image_iteration) + ".")
            print("------------------------------------")
            image_iteration += 1

        elif image_iteration == 8: # Ultimo filtro
            print("------------------------------------")
            print("Image iteration: " + str(image_iteration))
            print("Showing NO dots")
            print("------------------------------------")
  Routine logs
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        iteration_no = 0
      Begin Routine:
        image_iteration = 0
        print("------------------------------------")
        print("Loading \"", file ,"\" file")
        print("Iteration number "+ str(iteration_no) + ".")
        print("------------------------------------")
      End Routine:
        iteration_no += 1
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images/images.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('file', 'images/cat.png')]),
      OrderedDict([('file', 'images/elephant.png')]),
      OrderedDict([('file', 'images/mouse.png')])]
    Routine logs
    LoopInitiator filter_removal loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 8
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      Routine trial_1
    LoopTerminator filter_removal
  LoopTerminator trials
