PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = magnocellular_stimuli
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
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
  Routine calibration_routine
    RoutineSettingsComponent calibration_routine
      disabled = True
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        periphereal_region_diameter = 0
      Each Frame:
        #periphereal_region_diameter = 0.5

        if slider_3.getRating() is not None:
            periphereal_region_diameter = slider_3.getRating()

        log_calibration.setText(f"Foveal region diameter: {periphereal_region_diameter:.2f}")
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.015
      pos = (0.45, 0.450)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Click here when calibrated
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    PolygonComponent periphereal_region_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size [set every frame] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    TextComponent log_calibration
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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
  Routine BL_1_SPATIAL_FREQ
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    DotsComponent dots_black_5
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_5
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    GratingComponent stim
      color [set every repeat] = $[1,1,1]
      contrast [set every repeat] = 1
      mask = circle
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = grating_size
      startVal [time (s)] = 0.0
      tex = sqr
      texture resolution = 512
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        #threshold_dict = load_thresholds_from_json()
        spatial_frequency_threshold = threshold_dict['spatial_frequency_threshold']


        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim.sf = spatial_frequency_threshold + spatial_frequency_threshold*offset_porcentual/100
        stim.ori = orientacion


        #other

        gaze_position = mouse.getPosition()

        logs_parametros_trial.alignText='left'
        logs_parametros_trial.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial.setText(
            f"Prueba 1 - Frecuencia espacial\n"
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
            f"Tipo: {tipo}\n"
            f"Umbral frecuencia espacial: {spatial_frequency_threshold:.2f}\n"
            f"Offset aplicado: {offset_porcentual}\n"
            f"SF mostrado: {spatial_frequency_threshold + spatial_frequency_threshold*offset_porcentual/100:.2f}"
        )

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs.setText("La mirada está dentro de la región")

        else:
            logs.setText("La mirada está fuera de la región")

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        # TODO: pasar a funcion

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_5.setAutoDraw(False)
            dots_black_5.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if FEEDBACK:
                    print(f"El resultado es: {success}")
                    show_feedback(feedback_txt, success)
            # SHOW NOISE
            stim.setAutoDraw(False)
            show_noise(dots_white_5, dots_black_5, response_time, orientacion, feedback_txt) #only one call
            continueRoutine = False

        if flag_skip_all:
            print("Se ha omitido el bloque BL_1 por activación del flag")
            trials_bl_1.finished = True
    KeyboardComponent key_resp
      allowedKeys = 'space', 'right', 'left', 'down'
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      syncScreenRefresh = False
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    PolygonComponent polygon
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_2.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_2
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_2
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent gaze
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine TEMPLATE_ROUTINE
    RoutineSettingsComponent TEMPLATE_ROUTINE
      disabled = True
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    CodeComponent code_12
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            import math

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim.sf = frecuencia_espacial
        stim.orientation = orientacion

        #other
        gaze_position = mouse.getPosition()
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial.setText(
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Posicion Angular: {posicion_angular:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Diametro 9º: {diametros_central_periferica[0]:.2f}, {diametros_central_periferica[1]:.2f}\n"
            f"Diametro {excentricidad}º: {diametros_estimulo[0]:.2f}, {diametros_estimulo[1]:.2f}\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Frecuencia Espacial: {frecuencia_espacial:.2f}\n"
            f"Frecuencia Temporal: {frecuencia_temporal:.3f}\n"
            f"Contraste: {contraste:.2f}\n"
            f"Color: {color_r},{color_g},{color_b}\n"
            f"Tamaño: {tamanyo:.2f}\n"
            f"FFT: {FFT:.2f}\n"
        )

        logs_screen_specs.setText(
            f"Pantalla: {nombre_pantalla}\n"
            f"Altura pantalla: {dim_y} m\n"
            f"Tamaño: {tamanyo_pulgadas}\"\n"
            f"Distancia paciente - pantalla (eyetracker): {distancia_eyetracker} m\n"
            f"Diametro umbral periferia-centro (normalizado): {periphereal_region_diameter:.2f} u\n"

        )
        ####################################################
        #################____SETTINGS____###################
        ####################################################

        stim.setPhase(frecuencia_temporal,'+')
        #stim.setPhase(0.01,'+')
        stim.draw()

        #dots_no = noise_dots_no # prueba --> cargar variable del csv y volcar al estimulo

        ## FFT if activated

        if FFT != 0:
            frames_por_ciclo = int((frecuencia_monitor / FFT) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        else:
            opacidad = 1

        stim.opacity = opacidad

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs.setText("La mirada está dentro de la circunferencia")

        else:
            logs.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    PolygonComponent periphereal_region_4
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos = foveal_region_pos
      shape = circle
      size [set every repeat] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_fixation_3
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos = foveal_region_pos
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    SliderComponent slider_5
      disabled = True
      forceEndRoutine = False
      granularity = 0
      initVal = 0.1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    GratingComponent stim_4
      color [set every repeat] = color_r, color_g, color_b
      contrast [set every repeat] = contraste
      mask = gauss
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    DotsComponent noise_7
      coherence = 1.0
      dir = 0.0
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 14000
      noiseDots = direction
      opacity [set every frame] = 1
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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    DotsComponent noise_8
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 14000
      noiseDots = direction
      opacity [set every frame] = 1
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord_3
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    RegionOfInterestComponent roi_3
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent polygon_5
      fillColor = white
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_4
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_screen_specs_3
      letterHeight = 0.02
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_3
      Code Type = Auto->JS
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      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_2.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_5
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_6
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.7, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent DIAL_REPRESENTATION_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori [set every frame] = DIAL*360
      shape = rectangle
      size = (0.01, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos [set every frame] = gaze_position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Auto->JS
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      Each Frame:
        if t>5:
            continueRoutine = False
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  Routine BL_3_CONTRAST
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    GratingComponent stim_5
      color [set every repeat] = $[1,1,1]
      mask = circle
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = grating_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      tex = sqr
      texture resolution = 512
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    CodeComponent code_8
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        #threshold_dict = load_thresholds_from_json()
        spatial_frequency_threshold = threshold_dict['spatial_frequency_threshold']
        contrast_threshold = threshold_dict['contrast_threshold']

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim_5.sf = spatial_frequency_threshold
        stim_5.contrast = contrast_threshold + contrast_threshold*offset_porcentual
        stim_5.ori = orientacion

        #other
        gaze_position = mouse.getPosition()

        logs_parametros_trial_5.alignText='left'
        logs_parametros_trial_5.anchorHoriz='left'
        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_5.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial_5.setText(
            f"Prueba 3 - Contraste\n"
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
            f"Tipo: {tipo}\n"
            f"Umbral contraste cargado: {contrast_threshold:.2f}\n"
            f"Offset aplicado: {offset_porcentual}\n"
            f"Contraste mostrado: {contrast_threshold + contrast_threshold*offset_porcentual/100:.2f}"
        )

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_6.setText("La mirada está dentro de la región")

        else:
            logs_6.setText("La mirada está fuera de la región")

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################
        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_7.setAutoDraw(False)
            dots_black_7.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if FEEDBACK:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_3, success)

            # SHOW NOISE
            stim_5.setAutoDraw(False)
            show_noise(dots_white_7, dots_black_7, response_time, orientacion, feedback_txt_3) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_3.finished = True
    KeyboardComponent key_resp_9
      allowedKeys = 'space', 'right', 'left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_6
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_5
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_5.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_7
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_8
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_5
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_5
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_5
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_7
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_7
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_3
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine BL_2_COLOR
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    CodeComponent code_14
      Code Type = Py
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      Before Experiment:
        import pandas as pd

        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        #threshold_dict = load_thresholds_from_json()
        frecuencia_espacial = threshold_dict['spatial_frequency_threshold']
        saturation_threshold = threshold_dict['color_threshold'][color_name]

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        #stim_6.sf = frecuencia_espacial
        #stim_6.orientation = orientacion
        stim_img.ori = orientacion

        #other
        gaze_position = mouse.getPosition()

        logs_parametros_trial_6.alignText='left'
        logs_parametros_trial_6.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_6.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial_6.setText(
            f"Prueba 2 - Color/saturación\n"
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
            #f"Tipo: {tipo}\n"
            f"Offset (%): {umbral_porcentual:.2f}\n"
            f"Umbral color {color_name}(%): {saturation_threshold:.2f}\n"
            f"Sat. C1 (%): {color_1_s:.2f}\n"
            f"Sat. C2 (%): {color_1_s+saturation_threshold + saturation_threshold*umbral_porcentual/100:.2f}\n"
        )


        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_7.setText("La mirada está dentro de la circunferencia")

        else:
            logs_7.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################
        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_6.setAutoDraw(False)
            dots_black_6.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if FEEDBACK:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_2, success)
             # SHOW NOISE
            stim_img.setAutoDraw(False)
            show_noise(dots_white_6, dots_black_6, response_time, orientacion, feedback_txt_2) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_2.finished = True
    CodeComponent gabor_generator_2
      Code Type = Py
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      Before Experiment:
        import numpy as np
        from PIL import Image
        import matplotlib.pyplot as plt


        def save_gabor_patch_image(frequency, size, c1, c2):
            amp, f = generate_gabor_patch(frequency, size)

            # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia
            c1 = np.array(c1)
            c2 = np.array(c2)

            # Calcular los valores de color para el parche
            im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))

            # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo
            alpha_channel = f

            # Combinar los valores RGB con el canal alfa para crear una imagen RGBA
            im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))

            # Convertir a imagen
            im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')
            im.save(f"./images/custom_stim.png")

        def generate_gabor_patch(frequency, size):
            im_range = np.arange(size)
            x, y = np.meshgrid(im_range, im_range)
            dx = x - size // 2
            dy = y - size // 2
            t = np.arctan2(dy, dx)
            r = np.sqrt(dx ** 2 + dy ** 2)
            x = r * np.cos(t)
            y = r * np.sin(t)

            # Transición brusca para los colores (líneas) en el patrón Gabor
            amp = np.where(np.cos(2 * np.pi * (x * frequency)) >= 0, 1, 0)
            f = np.where(r <= size // 2, 1, 0)

            return amp, f
        def hsv_a_rgb(h, s, v):
            """
            Convierte un color desde HSV a RGB.

            Parámetros:
            h (float): Matiz (Hue) en grados (0-360).
            s (float): Saturación (Saturation) como porcentaje (0-100).
            v (float): Valor (Value) como porcentaje (0-100).

            Retorna:
            tuple: Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.
            """
            h = h % 360
            s /= 100
            v /= 100

            c = v * s
            x = c * (1 - abs((h / 60) % 2 - 1))
            m = v - c

            if 0 <= h < 60:
                r, g, b = c, x, 0
            elif 60 <= h < 120:
                r, g, b = x, c, 0
            elif 120 <= h < 180:
                r, g, b = 0, c, x
            elif 180 <= h < 240:
                r, g, b = 0, x, c
            elif 240 <= h < 300:
                r, g, b = x, 0, c
            else:
                r, g, b = c, 0, x

            r = (r + m) * 255
            g = (g + m) * 255
            b = (b + m) * 255

            return int(round(r)), int(round(g)), int(round(b))


        def normalizar_rgb(rgb):
            """
            Normaliza una tupla de valores RGB dividiendo cada componente por 255.

            Parámetros:
            rgb (tuple): Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.

            Retorna:
            tuple: Una tupla con valores normalizados (R, G, B), cada uno en el rango de 0 a 1.
            """
            return tuple(component / 255 for component in rgb)
      Begin Routine:
        frequency = frecuencia_espacial/2000 # division para equiparar con unidades del parche de psychopy

        size = 1600
        c1_hsv = [color_1_h,color_1_s,color_1_v]
        c2_hsv = [  color_1_h,
                    color_1_s+saturation_threshold + saturation_threshold*umbral_porcentual/100,
                    color_1_v]      #[color_2_r,color_2_g,color_2_b]

        #logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor
        save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))
    KeyboardComponent key_resp_10
      allowedKeys = 'space', 'right', 'left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_7
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_6
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_5.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_9
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_10
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_6
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_6
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_6
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent stim_img
      image [set every repeat] = C:\Users\akoun\Desktop\Biocruces\siburmuin\src\begiBrainDemo\images\custom_stim.png
      size = grating_size
      startVal [time (s)] = 0.0
      texture resolution = 512
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    DotsComponent dots_white_6
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_6
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_2
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine BL_4_TEMPORAL_FREQ
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    CodeComponent code_15
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        frecuencia_parpadeo = 30  # Hz, frecuencia de parpadeo deseada (valor inicial)
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1

        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################
        spatial_frequency_threshold = threshold_dict['spatial_frequency_threshold']
        flicker_threshold = threshold_dict['flicker_threshold']


        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim_7.sf = spatial_frequency_threshold
        stim_7.ori = orientacion

        #other
        gaze_position = mouse.getPosition()

        logs_parametros_trial_7.alignText='left'
        logs_parametros_trial_7.anchorHoriz='left'
        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_7.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial_7.setText(
            f"Prueba 4 - Frecuencia Temporal\n"
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Tamaño Estímulo: {grating_size[0]:.2f}\n"
            f"Tipo: {tipo}\n"
            f"Umbral FFT cargado: {flicker_threshold:.2f}\n"
            f"Offset aplicado: {offset_porcentual}\n"
            f"Frecuencia mostrada: {flicker_threshold + flicker_threshold*offset_porcentual/100:.2f} FPS/Hz"
        )

        ####################################################
        #################_______FFT______###################
        ####################################################
        frecuencia_deseada = flicker_threshold + flicker_threshold*offset_porcentual/100
        if frecuencia_monitor/2 < frecuencia_deseada:
            print("No se puede mostrar la frecuencia deseada en el monitor actual")
        else:
            frames_por_ciclo = int((frecuencia_monitor / frecuencia_deseada) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
            stim_7.opacity = opacidad

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_8.setText("La mirada está dentro de la región")

        else:
            logs_8.setText("La mirada está fuera de la región")

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True
        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_8.setAutoDraw(False)
            dots_black_8.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if FEEDBACK:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_4, success)

            stim_7.setAutoDraw(False)
            show_noise(dots_white_8, dots_black_8, response_time, orientacion, feedback_txt_4) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_4.finished = True
    KeyboardComponent key_resp_11
      allowedKeys = 'space', 'right', 'left'
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_8
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_7
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
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      End Routine:
        s.close()
    PolygonComponent logs_background_11
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_12
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_7
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_7
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent stim_7
      color [set every repeat] = $[1,1,1]
      contrast [set every repeat] = 1
      mask = circle
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = grating_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      tex = sqr
      texture resolution = 512
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    PolygonComponent gaze_7
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_8
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_8
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_4
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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
  Routine BL_5_SEMANTIC_STIM
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    ImageComponent semantic_stim
      image [set every repeat] = $path
      pos = (0.0, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_13
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Py
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      Begin Routine:
        logs_parametros_trial_8.alignText='left'
        logs_parametros_trial_8.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        logs_parametros_trial_8.setText(
            f"Prueba 5 - Estímulos semánticos\n"
            f"Intento: {intento}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Tamaño Estímulo: {tamanyo:.2f}\n"
            f"Tipo: {tipo}\n"
        )

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_9.setAutoDraw(False)
            dots_black_9.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if FEEDBACK:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_5, success)
            semantic_stim.setAutoDraw(False)
            show_noise(dots_white_9, dots_black_9, response_time, orientacion, feedback_txt_5) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_5.finished = True
    TextComponent logs_parametros_trial_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent right_arrow
      fillColor = white
      ori = 90
      pos = (0.35, 0)
      shape = arrow
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow
      fillColor = white
      ori = -90
      pos = (-0.35, 0)
      shape = arrow
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent right_arrow_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      text = Ser vivo
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    TextComponent left_arrow_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      text = Inerte
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    DotsComponent dots_white_9
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_9
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_5
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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  Routine CONTRAST_STAIRCASE_TEST
    RoutineSettingsComponent CONTRAST_STAIRCASE_TEST
      disabled = True
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    CodeComponent code_18
      Code Type = Py
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      Begin Routine:
        import csv

        # Variables estaticas
        contrast_starting_value = 0.05
        contrast_step_size = 0.01

        # Inicializacion de variables que posteriormente cambian
        contrast = contrast_starting_value
        staircase_test_orientation = get_random_orientation()
        step = contrast_step_size
        reversals = 0
        last_direction = None
        reversal_contrasts = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        grating.contrast = contrast
        grating.ori = staircase_test_orientation

        # Cargar frecuencia espacial del test
        threshold_dict = load_thresholds_from_json()
        grating.sf = threshold_dict['spatial_frequency_threshold']
        print(f"Se ha establecido la frecuencia espacial del estímulo a un valor de {threshold_dict['spatial_frequency_threshold']} unidades.")

        dots_white.setAutoDraw(False)
        dots_black.setAutoDraw(False)
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'n' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    contrast = max(0, contrast - step)  # Disminuir el contraste
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no ve el estimulo
                contrast += step  # Aumentar el contraste
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_contrasts.append(contrast)

                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print('Reversal detected ({reversals})')
                last_direction = "up"

            grating.setAutoDraw(False)
            show_noise(dots_white, dots_black, staircase_noise_duration)
            grating.setAutoDraw(True)
            # Actualizar el contraste del estímulo
            grating.contrast = contrast
            staircase_test_orientation = get_random_orientation()
            grating.ori = staircase_test_orientation

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'contrast': contrast,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                staircase_data_filename = './data/contrast_staircase_test_data.csv'
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'contrast', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_contrast = get_threshold('contrast', staircase_data_filename)
                print(f"Contrast Threshold for patient: {test_contrast}")
                threshold_dict['contrast_threshold'] = test_contrast
                save_thresholds_to_json(threshold_dict)

                dots_white.setAutoDraw(False)
                dots_black.setAutoDraw(False)
                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        logs_10.text = f"Step Size = {step}"
        dots_white.setAutoDraw(False)
        dots_black.setAutoDraw(False)
    KeyboardComponent key_resp_14
      allowedKeys = 's','n','right','left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_10
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    GratingComponent grating
      mask = circle
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_white
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine COLOR_STAIRCASE_TEST
    RoutineSettingsComponent COLOR_STAIRCASE_TEST
      disabled = True
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    CodeComponent code_19
      Code Type = Py
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      Begin Routine:
        import csv
        # Variables estaticas
        saturation_starting_value = 55
        saturation_step_size = 5
        staircase_test_orientation = get_random_orientation()

        # Inicializacion de variables que posteriormente cambian
        saturation = saturation_starting_value
        step = saturation_step_size
        reversals = 0
        last_direction = None
        reversal_saturations = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        dots_white_2.setAutoDraw(False)
        dots_black_2.setAutoDraw(False)

        # Tipo de test
        if color_saturation_type == 'low':
            static_saturation = 0
            saturation_starting_value = 15
        elif color_saturation_type == 'high':
            static_saturation = 70
            saturation_starting_value = 100
        elif color_saturation_type == 'medium':
            static_saturation = 50
            saturation_starting_value = 70
        else:
            print("No se ha especificado un tipo de saturación a medir")
            static_saturation = 0
            saturation_starting_value = 0

        saturation = saturation_starting_value
        # Inicializacion de variables
        # Cargar frecuencia espacial del test
        threshold_dict = load_thresholds_from_json()
        print(f"Se ha establecido la frecuencia espacial del estímulo a un valor de {threshold_dict['spatial_frequency_threshold']} unidades.")

        frequency = threshold_dict['spatial_frequency_threshold']/500 # division para equiparar con psychopy
        size = 400
        c1_hsv = (color_h, static_saturation, color_v) # From XLS
        c2_hsv = (color_h, saturation, color_v)
        print(f"Testing color: {color_name}")

        image_2.ori = staircase_test_orientation

        # Generar el parche de Gabor
        save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'n' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    saturation = max(0, saturation - step)
                    if saturation < static_saturation:
                        # si pasa esto, el test se pasa de rosca. Hay que limitar el valor.
                        saturation = static_saturation
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no ve el estimulo
                saturation += step  # Aumentar el contraste
                if saturation > 100: # Limitar maximo para que no se pase de rosca
                    saturation = 100
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_saturations.append(saturation)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 2 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print(f'Reversal detected ({reversals})')
                last_direction = "up"

            image_2.setAutoDraw(False)
            show_noise(dots_white_2, dots_black_2, staircase_noise_duration)
            image_2.setAutoDraw(True)

            # Actualizar el color y rotacion del estímulo
            staircase_test_orientation = get_random_orientation()
            image_2.ori = staircase_test_orientation
            c2_hsv = (color_h, saturation, color_v)
            print(f"Color 1: {c1_hsv}\nColor 2: {c2_hsv}\n")

        #logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor

            save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'saturation': saturation,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                staircase_data_filename = f'./data/saturation_staircase_test_data_{color_name}_{color_saturation_type}.csv'
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'saturation', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_saturation = get_threshold('saturation', staircase_data_filename)
                print(f"Saturation Threshold for patient: {test_saturation}")
                threshold_dict['color_threshold'][color_name] = test_saturation-static_saturation
                save_thresholds_to_json(threshold_dict)


                continueRoutine = False

            dots_white_2.setAutoDraw(False)
            dots_black_2.setAutoDraw(False)

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        logs_11.text = f"Step Size = {step}"

        dots_white_2.setAutoDraw(False)
        dots_black_2.setAutoDraw(False)
    KeyboardComponent key_resp_15
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_11
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    CodeComponent gabor_generator
      Code Type = Py
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      Before Experiment:
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    ImageComponent image_2
      image [set every frame] = .\images\custom_stim.png
      size = grating_size
      startVal [time (s)] = 0.0
      texture resolution = 512
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    DotsComponent dots_white_2
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_2
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPATIAL_FREQ_STAIRCASE_TEST
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    GratingComponent grating_7
      mask = circle
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_black_3
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_white_3
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Py
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      Begin Experiment:
        import random

        def get_random_orientation():
            return random.choice([45, 135])
      Begin Routine:
        import csv

        # Variables estaticas
        sf_starting_value = 50
        sf_step_size = 15
        sf_starting_orientation = get_random_orientation()


        # Inicializacion de variables que posteriormente cambian
        sf = sf_starting_value
        step = sf_step_size
        staircase_test_orientation = sf_starting_orientation
        reversals = 0
        last_direction = None
        reversal_sf = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        # Acciones inicio de rutina
        grating_7.sf = sf
        grating_7.ori = staircase_test_orientation

        dots_white_3.setAutoDraw(False)
        dots_black_3.setAutoDraw(False)

        threshold_dict = load_thresholds_from_json()     #cargar diccionario
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'n' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve las lineas del estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    sf = max(0, sf + step)  # Aumentar las lineas
                    last_direction = "down"
            else:
                sf = sf - step
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_sf.append(sf)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print(f'Reversal detected ({reversals})')
                last_direction = "up"

            grating_7.setAutoDraw(False)
            show_noise(dots_white_3, dots_black_3, staircase_noise_duration)
            grating_7.setAutoDraw(True)

            # Actualizar el sf y orientacion del estímulo
            grating_7.sf = sf
            staircase_test_orientation = get_random_orientation()
            grating_7.ori = staircase_test_orientation


            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'spatial_frequency': sf,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)

                # almaceno trials en 'data' para su posterior analisis (CSV)
                staircase_data_filename = './data/sf_staircase_test_data.csv'
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'spatial_frequency', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_sf = get_threshold('spatial_frequency', staircase_data_filename)
                print(f"Spatial Frequency Threshold for patient: {test_sf}")
                threshold_dict['spatial_frequency_threshold'] = test_sf
                save_thresholds_to_json(threshold_dict)

                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        logs_12.text = f"Step Size = {step}"
        dots_white_3.setAutoDraw(False)
        dots_black_3.setAutoDraw(False)
    KeyboardComponent key_resp_16
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_12
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_19
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FFT_STAIRCASE_TEST
    RoutineSettingsComponent FFT_STAIRCASE_TEST
      disabled = True
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    CodeComponent flicker_daemon
      Code Type = Auto->JS
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      Begin Routine:
        frecuencia_monitor = 144
        frecuencia_parpadeo = 30  # Hz, frecuencia de parpadeo deseada (valor inicial)
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Each Frame:
        if fft is not None:
            frames_por_ciclo = int((frecuencia_monitor / fft) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        else:
            opacidad = 1

        grating_8.opacity = opacidad
    CodeComponent code_21
      Code Type = Py
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      Begin Routine:
        import csv

        # Variables estaticas
        fft_starting_value = 25
        fft_step_size = 2
        staircase_test_orientation = get_random_orientation()

        # Inicializacion de variables que posteriormente cambian
        fft = fft_starting_value
        step = fft_step_size
        reversals = 0
        last_direction = None
        reversal_ffts = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None

        # Cargar frecuencia espacial del test
        threshold_dict = load_thresholds_from_json()
        grating_8.sf = threshold_dict['spatial_frequency_threshold']
        grating_8.ori = staircase_test_orientation

        print(f"Se ha establecido la frecuencia espacial del estímulo a un valor de {threshold_dict['spatial_frequency_threshold']} unidades.")
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'n' in keys: # El paciente no ve las lineas
            response = False
        elif 'right' in keys and staircase_test_orientation == 45: # Acierto
            response = True
        elif 'left' in keys and staircase_test_orientation == 135: # Acierto
            response = True
        elif 'right' in keys or 'left' in keys:
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el parpadeo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    fft = max(0, fft + step)  # Aumentar flicker
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no aprecia el parpadeo
                fft -= step  # disminuir el parpadeo
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_ffts.append(fft)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print(f'Reversal detected ({reversals})')
                last_direction = "up"

            grating_8.setAutoDraw(False)
            show_noise(dots_white_4, dots_black_4, staircase_noise_duration)
            grating_8.setAutoDraw(True)

            staircase_test_orientation = get_random_orientation()
            grating_8.ori = staircase_test_orientation

            # Actualizar el contraste del estímulo
            #grating.contrast = contrast

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'fft': fft,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                staircase_data_filename = './data/fft_staircase_test_data.csv'
                with open(staircase_data_filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'fft', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                # Actualizar y almacenar el diccionario de thresholds
                test_fft = get_threshold('fft', staircase_data_filename)
                print(f"FFT Threshold for patient: {test_fft}")
                threshold_dict['flicker_threshold'] = test_fft
                save_thresholds_to_json(threshold_dict)

                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        logs_13.text = f"Step Size = {step}\nFFT freq = {fft} Hz"
        dots_white_4.setAutoDraw(False)
        dots_black_4.setAutoDraw(False)
    KeyboardComponent key_resp_17
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs_13
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    GratingComponent grating_8
      mask = circle
      saveStartStop = False
      size = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent dots_white_4
      coherence = 1.0
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_4
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent FPS_counter_2
      Code Type = Auto->JS
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      Begin Routine:
        tiempo_anterior = 0
        fps = 0  # Variable para almacenar el FPS
      Each Frame:
        tiempo_actual = t
        delta_tiempo = tiempo_actual - tiempo_anterior # tiempo desde el frame anterior

        if delta_tiempo > 0:
            fps = 1.0 / delta_tiempo  # Frecuencia: (1 / tiempo entre frames) (Hz)

        tiempo_anterior = tiempo_actual

        FPS_logs_2.text = f"FPS: {fps:.2f}"  # Mostrar con 2 decimales
    TextComponent FPS_logs_2
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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  Routine INSTRUCTIONS
    RoutineSettingsComponent INSTRUCTIONS
      disabled = True
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    ImageComponent logo_bio_2
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab_2
      image = images/compneuro_horizontal.png
      pos = (0.45, 0.35)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_title_2
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TEST DE EVALUACIÓN DE LOS SISTEMAS MAGNOCELULAR Y PARVOCELULAR
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    TextComponent text_instructions_2
      letterHeight = 0.035
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        #text_instructions.alignHoriz='left'
        #text_instructions.wrapWidth=1.0
      Begin Routine:
        instruction_no = 0
        messages_instructions = [title]
        for i in range(1, 6):
            var_name = f"instruction_{i}"
            if var_name in globals():
                instruction = globals()[var_name]
                if instruction: # Si la instrucción no esta vacía se añade a la lista que aparecera por pantalla
                    messages_instructions.append(instruction)
        print(f'Lista de instrucciones cargada: {messages_instructions}')
      Each Frame:
        text_instructions_2.text = messages_instructions[instruction_no]

        if instruction_no == (len(messages_instructions) - 1):
            button_next_instruction_2.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction_2.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_no == 0:
            button_previous_instruction_2.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction_2.opacity = 1.0
            #button_previous_instruction.status = STARTED

        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vaciía (teoricamente)

        if 'space' in keys:
            continueRoutine = False
    ButtonComponent button_next_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_no < len(messages_instructions)-1:
            instruction_no+=1
    ButtonComponent button_previous_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_no:
            instruction_no-=1
    KeyboardComponent key_resp_skip_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine load_config
    RoutineSettingsComponent load_config
      desc = Loads screen config (defined in screen_config.json) and initializes global variables & functions
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    CodeComponent code_4
      Code Type = Py
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      Begin Experiment:
        periphereal_region_diameter = 0

        ################################
        ## CONFIGURACION MODIFICABLE: ##
        ################################
        nombre_pantalla = 'pantalla4'
        distancia_eyetracker = 0.65 # m
        alpha = angulo_region_central = 9 # º DEG
      Begin Routine:
        import json
        import math

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y
        # Cargar el archivo JSON
        def cargar_configuracion(nombre_pantalla):
            with open('screen_config.json', 'r') as file:
                config = json.load(file)

            # Seleccionar la configuración específica
            pantalla_config = config.get(nombre_pantalla)

            if pantalla_config:
                nombre = pantalla_config['nombre']
                tamanyo_pulgadas = pantalla_config['tamanyo']
                dim_y = pantalla_config['dim_y']
                frecuencia_monitor = pantalla_config['frecuencia']

                print(f'Se ha cargado la siguiente configuracion:\n'
                      f'Pantalla {nombre_pantalla} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m')
                return nombre, tamanyo_pulgadas, dim_y,frecuencia_monitor
            else:
                print("Configuración de pantalla no encontrada.")
                return None, None, None, None  # Devolver None para cada valor esperado

        nombre, tamanyo_pulgadas, dim_y, frecuencia_monitor = cargar_configuracion(nombre_pantalla)


        if nombre:  # Comprobar que nombre no es None antes de usar las variables
            # Calcular el diámetro de la frontera de la periferia

            diameter_unit, diameter_m = calculate_diameter(alpha, distancia_eyetracker, dim_y)
            periphereal_region_diameter = diameter_unit

            log = f'Se ha cargado la configuracion de la {nombre_pantalla}:\n Pantalla {nombre} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m y {frecuencia_monitor} Hz.'
            print(log)

        logs2.setText(
                     f'Se ha cargado la configuracion de la {nombre_pantalla}:\n Pantalla {nombre} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m y {frecuencia_monitor} Hz.\n'
                     f'Para una distancia de {distancia_eyetracker} m entre el sujeto y la pantalla, el diametro debe ser de {diameter_unit:.2f} u.\n'
                     f'El diámetro equivalente es de {diameter_m:.2f} m'
                     )
    PolygonComponent periphereal_region_result
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      shape = circle
      size [set every repeat] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    PolygonComponent foveal_region_result
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent logs2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent time_daemon
      Code Type = Auto->JS
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      Each Frame:
        if t>5:
            continueRoutine = False
    CodeComponent GLOBAL_VARIABLES_AND_FUNCTIONS
      Code Type = Py
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      Before Experiment:
        # IMPORTS
        from psychopy import core
        import random
        import threading
        import time

        #GLOBAL VARIABLES

        noise_dots = 25000
        grating_size = (0.5,0.5)
        continueRoutine_ref = [True]

        # Staircase test params
        n_reversals_to_average = 4
        stop_reversals = 5
        staircase_noise_duration = 0.5

        # Test params
        stim_time = 2
        response_time = 0.5 # time after stimuli disapears to answer
        FEEDBACK = True


        # FUNCTIONS
        def comprobar_respuesta(orientacion):
            keys = event.getKeys()
            if ('right' in keys and orientacion == 45) or ('left' in keys and orientacion == 135): # Acierto:
                success                 = True
            elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
                success                 = False
            else:
                success = None
            return success

        def show_noise(dots_white, dots_black, duration, orientacion = None, feedback_txt = None):
            # Habilitar los puntos de ruido
            dots_white.setAutoDraw(True)
            dots_black.setAutoDraw(True)

            noise_timer = core.Clock()
            noise_timer.reset()

            # Mostrar el ruido durante el tiempo de duración especificado
            while noise_timer.getTime() < duration:
                win.flip()  # Actualiza la ventana en cada frame para mantener la animación
                #igual se puede asignar una duración x al ruido y no tener que hacer esta guarrada
                # show feedback during noise
                if FEEDBACK and orientacion is not None and feedback_txt is not None:
                    success = comprobar_respuesta(orientacion)
                    if success is not None:
                        show_feedback(feedback_txt, success)

            # Desactivar los puntos de ruido
            dots_white.setAutoDraw(False)
            dots_black.setAutoDraw(False)

        def get_random_orientation():
            return random.choice([45, 135])

        def get_threshold(test_var_name : str, results_csv_path):
            data = pd.read_csv(results_csv_path)

            # Filtrar filas con reversals
            reversal_data = data[data['reversals'] > 0]

            threshold = reversal_data[test_var_name].tail(n_reversals_to_average).mean()

            return threshold

        def show_feedback(feedback_txt, success):
            if success != -1 and success:
                feedback_txt.setText("✓")
            elif success != -1 and not success:
                feedback_txt.setText("x")
            else:
                feedback_txt.setText("")

            # Función para borrar el texto después del ruido
            def clear_text():
                time.sleep(staircase_noise_duration)
                feedback_txt.setText("")  # Limpia el texto

            # Crear y lanzar el hilo para que borre el texto
            t = threading.Thread(target=clear_text)
            t.start()  # Inicia el hilo para que la ejecución principal continúe

            return


        def load_sf():
            archivo_sf = './data/sf_staircase_test_data.csv'
            try:
                test_sf = get_threshold('spatial_frequency', archivo_sf)
                print(f'Se ha cargado la frecuencia espacial testada con un valor de {test_sf}')
                return test_sf

            except FileNotFoundError:
                print(f'Error: El archivo {archivo_sf} no fue encontrado.')
                return -1

            except Exception as e:
                print(f'Error al cargar la frecuencia espacial del archivo {archivo_sf}: {str(e)}')
                return -1
      Begin Experiment:
        stop_reversals = 5
        continueRoutine_ref = [True]
    CodeComponent FPS_counter
      Code Type = Auto->JS
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      Begin Routine:
        tiempo_anterior = 0
        fps = 0  # Variable para almacenar el FPS
      Each Frame:
        tiempo_actual = t
        delta_tiempo = tiempo_actual - tiempo_anterior # tiempo desde el frame anterior

        if delta_tiempo > 0:
            fps = 1.0 / delta_tiempo  # Frecuencia: (1 / tiempo entre frames) (Hz)

        tiempo_anterior = tiempo_actual

        FPS_logs.text = f"FPS: {fps:.2f}"  # Mostrar con 2 decimales
    CodeComponent DATA_MANAGEMENT
      Code Type = Py
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      Before Experiment:
        import json

        # TEMPORAL --> Se debe cargar de memoria o inicializar con valores nulos
        threshold_values = {
            'spatial_frequency_threshold': 53.98,   # Flotante
            'flicker_threshold': 40.0,              # Flotante
            'contrast_threshold': 0.002,            # Flotante
            'color_threshold': {                    # Diccionario para colores con valores flotantes
                'red': 0.93,
                'green': 3.44
            }
        }
        '''
        threshold_values = {
            'spatial_frequency_threshold': None,  # Flotante
            'flicker_threshold': None,            # Flotante
            'contrast_threshold': None,           # Flotante
            'color_threshold': {}                 # Diccionario para colores con valores flotantes
        }
        '''
        ''' MODIFICAR EL DICCIONARIO
        threshold_dict['spatial_frequency_threshold'] = spatial_frequency
        threshold_dict['flicker_threshold'] = flicker
        threshold_dict['contrast_threshold'] = contrast
        threshold_dict['color_threshold'][color_name] = color_value
        '''
        # Función para mostrar el diccionario completo al final del test
        def display_thresholds(threshold_dict):
            print("Valores de Umbrales del Paciente:")
            print(f"Frecuencia Espacial: {threshold_dict['spatial_frequency_threshold']}")
            print(f"Flicker: {threshold_dict['flicker_threshold']}")
            print(f"Contraste: {threshold_dict['contrast_threshold']}")
            print("Umbrales de Color:")
            for color, value in threshold_dict['color_threshold'].items():
                print(f"{color}: {value}")

        # Función para guardar el diccionario en un archivo JSON
        def save_thresholds_to_json(threshold_dict, filename='./data/thresholds.json'):
            with open(filename, 'w') as f:
                json.dump(threshold_dict, f, indent=4)  # indent para que el JSON sea legible
            print(f"Diccionario guardado en {filename}")

        # Función para cargar el diccionario desde un archivo JSON
        def load_thresholds_from_json(filename='./data/thresholds.json'):
            with open(filename, 'r') as f:
                threshold_dict = json.load(f)
            print(f"Diccionario cargado desde {filename}")
            return threshold_dict
    TextComponent FPS_logs
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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  Routine LOAD_THRESHOLDS
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    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        threshold_dict = load_thresholds_from_json()
  Routine BL6_
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  Routine BL_7_CONTRAST
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    ImageComponent semantic_stim_2
      image [set every repeat] = $path
      pos = (0.0, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_22
      allowedKeys = 'space', 'right', 'left'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_14
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_23
      Code Type = Py
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      Begin Routine:
        ####################################################
        ########____LOAD STAIRCASE TEST RESULTS____#########
        ####################################################

        contrast_threshold = threshold_dict['contrast_threshold']
        semantic_stim_2.contrast = contrast_threshold + contrast_threshold*offset_porcentual

        logs_parametros_trial_9.alignText='left'
        logs_parametros_trial_9.anchorHoriz='left'

        event.clearEvents()

        first_frame             = True
        flag_skip_all           = False
        flag_answer_registered  = False
        success                 = -1
        undecided               = False
      Each Frame:
        logs_parametros_trial_9.setText(
            f"Prueba 7 - Estímulos semánticos\n"
            f"Intento: {intento}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Tamaño Estímulo: {tamanyo:.2f}\n"
            f"Tipo: {tipo}\n"
        )

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        flag_skip_all           = False
        flag_answer_registered  = False
        undecided               = False
        success                 = -1

        keys = event.getKeys()
        if 'space' in keys:
            flag_skip_all = True

        elif 'right' in keys and orientacion == 45: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'left' in keys and orientacion == 135: # Acierto:
            flag_answer_registered  = True
            success                 = True
        elif 'right' in keys or 'left' in keys: # Respuesta incorrecta
            flag_answer_registered  = True
            success                 = False
        elif 'down' in keys: # NS/NC
            flag_answer_registered  = True
            success                 = False
            undecided               = True

        ####################################################
        ###############____TIME & NOISE____#################
        ####################################################

        if first_frame: # Ejecucion unica
            dots_white_10.setAutoDraw(False)
            dots_black_10.setAutoDraw(False)
            first_time = False

        if (t>stim_time) or flag_answer_registered: # time exceeded OR answer registered
            # SHOW RESULTS IF FEEDBACK ACTIVATED
            if FEEDBACK:
                print(f"El resultado es: {success}")
                show_feedback(feedback_txt_6, success)
            semantic_stim_2.setAutoDraw(False)
            show_noise(dots_white_10, dots_black_10, response_time, orientacion, feedback_txt_6) #only one call
            continueRoutine = False

        if flag_skip_all:
            trials_bl_7.finished = True
    TextComponent logs_parametros_trial_9
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent right_arrow_2
      fillColor = white
      ori = 90
      pos = (0.35, 0)
      shape = arrow
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow_2
      fillColor = white
      ori = -90
      pos = (-0.35, 0)
      shape = arrow
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent right_arrow_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      text = Ser vivo
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    TextComponent left_arrow_text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      text = Inerte
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    DotsComponent dots_white_10
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black_10
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.75,1]
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent feedback_txt_6
      letterHeight = 0.085
      startVal [time (s)] = 0.0
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Flow
  Routine calibration_routine
  Routine TEMPLATE_ROUTINE
  Routine load_config
  LoopInitiator spatial_freq_instructions loopType="TrialHandler"
    conditions = [{'title': 'SPATIAL FREQUENCY THRESHOLD STAIRCASE TEST', 'instruction_1': 'En este experimento, evaluaremos tu capacidad para percibir las líneas de un patrón visual conocido como parche de Gabor', 'instruction_2': 'Observa la pantalla: Aparecerá un patrón de líneas', 'instruction_3': 'Si puedes ver las líneas del patrón, pulsa la tecla S. Si no puedes ver las líneas (parece una imagen borrosa o uniforme), pulsa la tecla N.', 'instruction_4': 'No te preocupes por acertar, lo importante es que indiques lo que ves.', 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}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
    conditionsFile = instructions/spatial_frequency_staircase_instructions.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator spatial_freq_instructions
  Routine SPATIAL_FREQ_STAIRCASE_TEST
  LoopInitiator FFT_instructions loopType="TrialHandler"
    conditions = [{'title': 'FLICKER FUSION THRESHOLD STAIRCASE TEST', 'instruction_1': 'En este experimento, vamos a medir tu capacidad para percibir un parpadeo en una luz intermitente', 'instruction_2': 'Observa la pantalla: Ver\xa0s una luz que puede parpadear o permanecer estable.', 'instruction_3': 'Tu tarea es sencilla: Si ves el parpadeo, pulsa la tecla S.  Si no ves el parpadeo y la luz parece estable, pulsa la tecla N.', 'instruction_4': 'No hay respuestas correctas o incorrectas, simplemente indica lo que ves.', 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}]
    conditionsFile = instructions/fft_staircase_instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator FFT_instructions
  Routine FFT_STAIRCASE_TEST
  LoopInitiator contrast_instructions loopType="TrialHandler"
    conditions = [{'title': 'SPATIAL FREQUENCY THRESHOLD STAIRCASE TEST', 'instruction_1': 'Observa la pantalla: Aparecerá un patrón de líneas con diferentes grados de contraste.', 'instruction_2': 'Si puedes ver las líneas del patrón, pulsa la tecla S.', 'instruction_3': 'Si no puedes ver las líneas (la imagen parece completamente uniforme o sin detalles), pulsa la tecla N.', 'instruction_4': None, 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}]
    conditionsFile = instructions/contrast_staircase_instructions.xlsx
    loopType = random
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator contrast_instructions
  Routine CONTRAST_STAIRCASE_TEST
  LoopInitiator color_instructions loopType="TrialHandler"
    conditions = [{'title': 'COLOR/SATURATION  THRESHOLD STAIRCASE TEST', 'instruction_1': 'Observa la pantalla: Aparecerá un patrón de líneas con diferentes colores.', 'instruction_2': 'Si puedes diferenciar los colores, pulsa la tecla S.', 'instruction_3': 'Si ves un color uniforme, pulsa la tecla N.', 'instruction_4': None, 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}]
    conditionsFile = instructions/color_staircase_instructions.xlsx
    loopType = sequential
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator color_instructions
  LoopInitiator colors_to_test loopType="TrialHandler"
    conditionsFile = colors_to_test.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'color_name': 'red', 'color_h': 0, 'color_v': 100},
      {'color_name': 'green', 'color_h': 120, 'color_v': 100}]
    Routine COLOR_STAIRCASE_TEST
  LoopTerminator colors_to_test
  Routine LOAD_THRESHOLDS
  LoopInitiator BL1_instructions loopType="TrialHandler"
    conditions = [{'title': 'BLOQUE 1: FRECUENCIA ESPACIAL', 'instruction_1': 'Una vez completada la fase de calibración, vamos a por el test!. ', 'instruction_2': 'Debes usar las flechas del teclado (derecha/izquierda) para responder a la siguiente pregunta: ¿Qué orientación tiene el parche? Solo tienes 2 segundos para ver el estímulo.', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
    conditionsFile = instructions/BL1_instructions.xlsx
    loopType = sequential
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator BL1_instructions
  LoopInitiator trials_bl_1 loopType="TrialHandler"
    Selected rows = 0:15
    conditionsFile = BL1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 'BL1_1'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', -20)]),
      OrderedDict([('intento', 'BL1_2'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', -20)]),
      OrderedDict([('intento', 'BL1_3'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', -20)]),
      OrderedDict([('intento', 'BL1_4'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', -20)]),
      OrderedDict([('intento', 'BL1_5'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', -20)]),
      OrderedDict([('intento', 'BL1_6'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', -10)]),
      OrderedDict([('intento', 'BL1_7'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', -10)]),
      OrderedDict([('intento', 'BL1_8'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', -10)]),
      OrderedDict([('intento', 'BL1_9'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', -10)])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
    Routine BL_1_SPATIAL_FREQ
  LoopTerminator trials_bl_1
  LoopInitiator BL2_instructions loopType="TrialHandler"
    conditions = [{'title': 'BLOQUE 2: COLOR/SATURACIÓN', 'instruction_1': None, 'instruction_2': 'Debes usar las flechas del teclado (derecha/izquierda) para responder a la siguiente pregunta: ¿Qué orientación tiene el parche? Solo tienes 2 segundos para ver el estímulo.', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
    conditionsFile = instructions/BL2_instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator BL2_instructions
  LoopInitiator trials_bl_2 loopType="TrialHandler"
    conditionsFile = BL2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 'PPT_TEST_1'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'parvo'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 0), ('color_1_s', 85), ('color_1_v', 100), ('color_name', 'red'), ('umbral_porcentual', 0)]),
      OrderedDict([('intento', 'PPT_TEST_2'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'parvo'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 0), ('color_1_s', 85), ('color_1_v', 100), ('color_name', 'red'), ('umbral_porcentual', 2)]),
      OrderedDict([('intento', 'PPT_TEST_3'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'parvo'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 0), ('color_1_s', 85), ('color_1_v', 100), ('color_name', 'red'), ('umbral_porcentual', 4)]),
      OrderedDict([('intento', 'PPT_TEST_4'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'parvo'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 0), ('color_1_s', 85), ('color_1_v', 100), ('color_name', 'red'), ('umbral_porcentual', 6)]),
      OrderedDict([('intento', 'PPT_TEST_5'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'parvo'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('color_1_h', 0), ('color_1_s', 85), ('color_1_v', 100), ('color_name', 'red'), ('umbral_porcentual', 8)])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
    Routine BL_2_COLOR
  LoopTerminator trials_bl_2
  LoopInitiator BL3_instructions loopType="TrialHandler"
    conditions = [{'title': 'BLOQUE 3: CONTRASTE', 'instruction_1': None, 'instruction_2': 'Debes usar las flechas del teclado (derecha/izquierda) para responder a la siguiente pregunta: ¿Qué orientación tiene el parche? Solo tienes 2 segundos para ver el estímulo.', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
    conditionsFile = instructions/BL3_instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator BL3_instructions
  LoopInitiator trials_bl_3 loopType="TrialHandler"
    Selected rows = 0:15
    conditionsFile = BL3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 'BL3_1'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 5)]),
      OrderedDict([('intento', 'BL3_2'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 5)]),
      OrderedDict([('intento', 'BL3_3'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 5)]),
      OrderedDict([('intento', 'BL3_4'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 5)]),
      OrderedDict([('intento', 'BL3_5'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('offset_porcentual', 5)]),
      OrderedDict([('intento', 'BL3_6'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 5)]),
      OrderedDict([('intento', 'BL3_7'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 5)]),
      OrderedDict([('intento', 'BL3_8'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 5)]),
      OrderedDict([('intento', 'BL3_9'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 5)]),
      OrderedDict([('intento', 'BL3_10'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('offset_porcentual', 5)])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
    Routine BL_3_CONTRAST
  LoopTerminator trials_bl_3
  LoopInitiator BL4_instructions loopType="TrialHandler"
    conditions = [{'title': 'BLOQUE 4: FLICKER', 'instruction_1': None, 'instruction_2': 'Debes usar las flechas del teclado (derecha/izquierda) para responder a la siguiente pregunta: ¿Qué orientación tiene el parche? Solo tienes 2 segundos para ver el estímulo.', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
    conditionsFile = instructions/BL4_instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator BL4_instructions
  LoopInitiator trials_bl_4 loopType="TrialHandler"
    conditionsFile = BL4.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 'BL4_1'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 30), ('FFT', 1)]),
      OrderedDict([('intento', 'BL4_2'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 30), ('FFT', 2)]),
      OrderedDict([('intento', 'BL4_3'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 30), ('FFT', 3)]),
      OrderedDict([('intento', 'BL4_4'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 30), ('FFT', 4)]),
      OrderedDict([('intento', 'BL4_5'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 30), ('FFT', 5)]),
      OrderedDict([('intento', 'BL4_6'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 30), ('FFT', 6)]),
      OrderedDict([('intento', 'BL4_7'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 30), ('FFT', 7)]),
      OrderedDict([('intento', 'BL4_8'), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 30), ('FFT', 8)]),
      OrderedDict([('intento', 'BL4_9'), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 30), ('FFT', 9)])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
    Routine BL_4_TEMPORAL_FREQ
  LoopTerminator trials_bl_4
  LoopInitiator BL5_instructions loopType="TrialHandler"
    conditions = [{'title': 'BLOQUE 5: ESTÍMULOS SEMÁNTICOS - FRECUENCIA ESPACIAL', 'instruction_1': '…', 'instruction_2': '…', 'instruction_3': None, 'instruction_4': None, 'instruction_5': None}]
    conditionsFile = instructions/BL5_instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator BL5_instructions
  LoopInitiator trials_bl_5 loopType="TrialHandler"
    conditionsFile = BL5.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 'BL5_1'), ('path', 'semantic_stims/low_B_N209044.png_con_alpha.png'), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('respusta', 'vivo'), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 'BL5_2'), ('path', 'semantic_stims/low_B_N289048.png_con_alpha.png'), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('respusta', 'vivo'), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 'BL5_3'), ('path', 'semantic_stims/low_B_N771063.png_con_alpha.png'), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('respusta', 'vivo'), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 'BL5_4'), ('path', 'semantic_stims/low_B_N824008.png_con_alpha.png'), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('respusta', 'vivo'), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 'BL5_5'), ('path', 'semantic_stims/low_003_0018.png_con_alpha.png'), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('respusta', 'inerte'), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 'BL5_6'), ('path', 'semantic_stims/low_012_0006.png_con_alpha.png'), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('respusta', 'inerte'), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 'BL5_7'), ('path', 'semantic_stims/low_013_0012.png_con_alpha.png'), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('respusta', 'inerte'), ('tamanyo', 0.25)])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
    Routine BL_5_SEMANTIC_STIM
  LoopTerminator trials_bl_5
  Routine BL6_
  Routine INSTRUCTIONS
  LoopInitiator trials_bl_7 loopType="TrialHandler"
    conditionsFile = BL7.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 'BL7_1'), ('path', 'semantic_stims/objects/high_003_0018_background_bw.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respusta', 'inerte'), ('tamanyo', 0.25), ('offset_porcentual', 0)]),
      OrderedDict([('intento', 'BL7_2'), ('path', 'semantic_stims/objects/high_006_0043_background_bw.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respusta', 'inerte'), ('tamanyo', 0.25), ('offset_porcentual', 2)]),
      OrderedDict([('intento', 'BL7_3'), ('path', 'semantic_stims/objects/high_023_0016_background_bw.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respusta', 'inerte'), ('tamanyo', 0.25), ('offset_porcentual', 4)]),
      OrderedDict([('intento', 'BL7_4'), ('path', 'semantic_stims/objects/high_063_0011_background_bw.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respusta', 'inerte'), ('tamanyo', 0.25), ('offset_porcentual', 6)]),
      OrderedDict([('intento', 'BL7_5'), ('path', 'semantic_stims/objects/low_167_0002_background_bw.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respusta', 'inerte'), ('tamanyo', 0.25), ('offset_porcentual', 8)]),
      OrderedDict([('intento', 'BL7_6'), ('path', 'semantic_stims/objects/high_146_0007_background_bw.png'), ('posicion_angular', 0), ('tipo', '-'), ('excentricidad', 0), ('respusta', 'inerte'), ('tamanyo', 0.25), ('offset_porcentual', 10)])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
    Routine BL_7_CONTRAST
  LoopTerminator trials_bl_7
