<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2023.2.3">
  <Settings>
    <Param val="3" valType="str" updates="None" name="Audio latency priority"/>
    <Param val="ptb" valType="str" updates="None" name="Audio lib"/>
    <Param val="" valType="str" updates="None" name="Completed URL"/>
    <Param val="auto" valType="str" updates="None" name="Data file delimiter"/>
    <Param val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code" updates="None" name="Data filename"/>
    <Param val="True" valType="bool" updates="None" name="Enable Escape"/>
    <Param val="" valType="str" updates="None" name="End Message"/>
    <Param val="{'participant': 'f&quot;{randint(0, 999999):06.0f}&quot;', 'session': '001'}" valType="code" updates="None" name="Experiment info"/>
    <Param val="True" valType="bool" updates="None" name="Force stereo"/>
    <Param val="False" valType="bool" updates="None" name="Full-screen window"/>
    <Param val="" valType="str" updates="None" name="HTML path"/>
    <Param val="" valType="str" updates="None" name="Incomplete URL"/>
    <Param val="testMonitor" valType="str" updates="None" name="Monitor"/>
    <Param val="[]" valType="list" updates="None" name="Resources"/>
    <Param val="False" valType="bool" updates="None" name="Save csv file"/>
    <Param val="False" valType="bool" updates="None" name="Save excel file"/>
    <Param val="False" valType="bool" updates="None" name="Save hdf5 file"/>
    <Param val="True" valType="bool" updates="None" name="Save log file"/>
    <Param val="True" valType="bool" updates="None" name="Save psydat file"/>
    <Param val="True" valType="bool" updates="None" name="Save wide csv file"/>
    <Param val="1" valType="num" updates="None" name="Screen"/>
    <Param val="False" valType="bool" updates="None" name="Show info dlg"/>
    <Param val="False" valType="bool" updates="None" name="Show mouse"/>
    <Param val="height" valType="str" updates="None" name="Units"/>
    <Param val="" valType="str" updates="None" name="Use version"/>
    <Param val="[1440, 900]" valType="list" updates="None" name="Window size (pixels)"/>
    <Param val="none" valType="str" updates="None" name="backgroundFit"/>
    <Param val="" valType="str" updates="None" name="backgroundImg"/>
    <Param val="avg" valType="str" updates="None" name="blendMode"/>
    <Param val="{'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW'}" valType="dict" updates="None" name="colPriority"/>
    <Param val="-1.0000, -0.0745, 0.0000" valType="color" updates="None" name="color"/>
    <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
    <Param val="100.1.1.1" valType="str" updates="None" name="elAddress"/>
    <Param val="FILTER_LEVEL_2" valType="str" updates="None" name="elDataFiltering"/>
    <Param val="FILTER_LEVEL_OFF" valType="str" updates="None" name="elLiveFiltering"/>
    <Param val="EYELINK 1000 DESKTOP" valType="str" updates="None" name="elModel"/>
    <Param val="ELLIPSE_FIT" valType="str" updates="None" name="elPupilAlgorithm"/>
    <Param val="PUPIL_AREA" valType="str" updates="None" name="elPupilMeasure"/>
    <Param val="1000" valType="num" updates="None" name="elSampleRate"/>
    <Param val="False" valType="bool" updates="None" name="elSimMode"/>
    <Param val="RIGHT_EYE" valType="str" updates="None" name="elTrackEyes"/>
    <Param val="PUPIL_CR_TRACKING" valType="str" updates="None" name="elTrackingMode"/>
    <Param val="multicolor_grating_test_2" valType="str" updates="None" name="expName"/>
    <Param val="on Sync" valType="str" updates="None" name="exportHTML"/>
    <Param val="None" valType="str" updates="None" name="eyetracker"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="gpAddress"/>
    <Param val="4242" valType="num" updates="None" name="gpPort"/>
    <Param val="ioHub" valType="str" updates="None" name="keyboardBackend"/>
    <Param val="exp" valType="code" updates="None" name="logging level"/>
    <Param val="('MIDDLE_BUTTON',)" valType="list" updates="None" name="mgBlink"/>
    <Param val="CONTINUOUS" valType="str" updates="None" name="mgMove"/>
    <Param val="0.5" valType="num" updates="None" name="mgSaccade"/>
    <Param val="neon.local" valType="str" updates="None" name="plCompanionAddress"/>
    <Param val="scene_camera.json" valType="file" updates="None" name="plCompanionCameraCalibration"/>
    <Param val="8080" valType="num" updates="None" name="plCompanionPort"/>
    <Param val="True" valType="bool" updates="None" name="plCompanionRecordingEnabled"/>
    <Param val="0.6" valType="num" updates="None" name="plConfidenceThreshold"/>
    <Param val="True" valType="bool" updates="None" name="plPupilCaptureRecordingEnabled"/>
    <Param val="" valType="str" updates="None" name="plPupilCaptureRecordingLocation"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="plPupilRemoteAddress"/>
    <Param val="50020" valType="num" updates="None" name="plPupilRemotePort"/>
    <Param val="1000" valType="num" updates="None" name="plPupilRemoteTimeoutMs"/>
    <Param val="False" valType="bool" updates="None" name="plPupillometryOnly"/>
    <Param val="psychopy_iohub_surface" valType="str" updates="None" name="plSurfaceName"/>
    <Param val="time" valType="str" updates="None" name="sortColumns"/>
    <Param val="" valType="str" updates="None" name="tbLicenseFile"/>
    <Param val="" valType="str" updates="None" name="tbModel"/>
    <Param val="60" valType="num" updates="None" name="tbSampleRate"/>
    <Param val="" valType="str" updates="None" name="tbSerialNo"/>
    <Param val="pyglet" valType="str" updates="None" name="winBackend"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <RoutineSettingsComponent name="trial" plugin="None">
        <Param val="none" valType="str" updates="None" name="backgroundFit"/>
        <Param val="" valType="str" updates="None" name="backgroundImg"/>
        <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
        <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
        <Param val="" valType="str" updates="constant" name="desc"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="trial" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="constant" name="skipIf"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="None" name="useWindowParams"/>
      </RoutineSettingsComponent>
      <CodeComponent name="code" plugin="None">
        <Param val="import numpy as np&amp;#10;from PIL import Image&amp;#10;import matplotlib.pyplot as plt&amp;#10;&amp;#10;&amp;#10;def save_gabor_patch_image(frequency, size, c1, c2):&amp;#10;    amp, f = generate_gabor_patch(frequency, size)&amp;#10;    &amp;#10;    # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia&amp;#10;    c1 = np.array(c1)&amp;#10;    c2 = np.array(c2)&amp;#10;    &amp;#10;    # Calcular los valores de color para el parche&amp;#10;    im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))&amp;#10;    &amp;#10;    # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo&amp;#10;    alpha_channel = f&amp;#10;    &amp;#10;    # Combinar los valores RGB con el canal alfa para crear una imagen RGBA&amp;#10;    im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))&amp;#10;    &amp;#10;    # Convertir a imagen&amp;#10;    im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')&amp;#10;    im.save(f&quot;C:/Users/akoun/Desktop/Biocruces/siburmuin/src/begiBrainDemo/images/custom_stim.png&quot;)&amp;#10;&amp;#10;def generate_gabor_patch(frequency, size):&amp;#10;    im_range = np.arange(size)&amp;#10;    x, y = np.meshgrid(im_range, im_range)&amp;#10;    dx = x - size // 2&amp;#10;    dy = y - size // 2&amp;#10;    t = np.arctan2(dy, dx)&amp;#10;    r = np.sqrt(dx ** 2 + dy ** 2)&amp;#10;    x = r * np.cos(t)&amp;#10;    y = r * np.sin(t)&amp;#10;    &amp;#10;    # Transición brusca para los colores (líneas) en el patrón Gabor&amp;#10;    amp = np.where(np.cos(2 * np.pi * (x * frequency)) &gt;= 0, 1, 0)&amp;#10;    f = np.where(r &lt;= size // 2, 1, 0)&amp;#10;    &amp;#10;    return amp, f&amp;#10;" valType="extendedCode" updates="constant" name="Before Experiment"/>
        <Param val="/* Syntax Error: Fix Python code */" valType="extendedCode" updates="constant" name="Before JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin JS Experiment"/>
        <Param val="import * as random from 'random';&amp;#10;function random_frequency() {&amp;#10;    return Math.random.uniform(0.01, 0.1);&amp;#10;}&amp;#10;frequency = random_frequency();&amp;#10;size = 500;&amp;#10;c1 = [color_1_r, color_1_g, color_1_b];&amp;#10;c2 = [color_2_r, color_2_g, color_2_b];&amp;#10;logs.text = `freq = ${util.pad(Number.parseFloat(frequency).toFixed(2), 1)}&amp;#10;c1 = (${util.pad(Number.parseFloat(c1[0]).toFixed(2), 1)}, ${util.pad(Number.parseFloat(c1[1]).toFixed(2), 1)}, ${util.pad(Number.parseFloat(c1[2]).toFixed(2), 1)})&amp;#10;c2 = (${util.pad(Number.parseFloat(c2[0]).toFixed(2), 1)}, ${util.pad(Number.parseFloat(c2[1]).toFixed(2), 1)}, ${util.pad(Number.parseFloat(c2[2]).toFixed(2), 1)})`&amp;#10;;&amp;#10;save_gabor_patch_image(frequency, size, c1, c2);&amp;#10;" valType="extendedCode" updates="constant" name="Begin JS Routine"/>
        <Param val="import random&amp;#10;&amp;#10;#def random_color():&amp;#10;#    return (random.random(), random.random(), random.random())&amp;#10;&amp;#10;def random_frequency():&amp;#10;    return random.uniform(0.01, 0.1)&amp;#10;&amp;#10;# Parámetros aleatorios&amp;#10;frequency = random_frequency()&amp;#10;size = 500&amp;#10;c1 = [color_1_r,color_1_g,color_1_b]#random_color()&amp;#10;c2 = [color_2_r,color_2_g,color_2_b]&amp;#10;&amp;#10;logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'&amp;#10;# Generar el parche de Gabor&amp;#10;save_gabor_patch_image(frequency, size, c1, c2)&amp;#10;" valType="extendedCode" updates="constant" name="Begin Routine"/>
        <Param val="Auto-&gt;JS" valType="str" updates="None" name="Code Type"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each JS Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="End Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="End JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="End JS Routine"/>
        <Param val="" valType="extendedCode" updates="constant" name="End Routine"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="code" valType="code" updates="None" name="name"/>
      </CodeComponent>
      <ImageComponent name="image" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="$[1,1,1]" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="False" valType="bool" updates="constant" name="flipHoriz"/>
        <Param val="False" valType="bool" updates="constant" name="flipVert"/>
        <Param val="C:\Users\akoun\Desktop\Biocruces\siburmuin\src\begiBrainDemo\images\custom_stim.png" valType="file" updates="set every repeat" name="image"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="" valType="str" updates="constant" name="mask"/>
        <Param val="image" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="20" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="(0.5, 0.5)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="128" valType="num" updates="constant" name="texture resolution"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
      </ImageComponent>
      <KeyboardComponent name="key_resp" plugin="None">
        <Param val="'space'" valType="list" updates="constant" name="allowedKeys"/>
        <Param val="" valType="str" updates="constant" name="correctAns"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="True" valType="bool" updates="constant" name="discard previous"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="key_resp" valType="code" updates="None" name="name"/>
        <Param val="press" valType="str" updates="constant" name="registerOn"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="last key" valType="str" updates="constant" name="store"/>
        <Param val="False" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="True" valType="bool" updates="constant" name="syncScreenRefresh"/>
      </KeyboardComponent>
      <TextComponent name="logs" plugin="None">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Open Sans" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.025" valType="num" updates="constant" name="letterHeight"/>
        <Param val="logs" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0.6, 0.35)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="" valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
    </Routine>
  </Routines>
  <Flow>
    <LoopInitiator loopType="TrialHandler" name="trials">
      <Param name="Selected rows" updates="None" val="0:15" valType="str"/>
      <Param name="conditions" updates="None" val="[OrderedDict([('intento', 1.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'magno'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 1.0)]), OrderedDict([('intento', 2.0), ('orientacion', 135.0), ('posicion_angular', 0.0), ('tipo', 'magno'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.75)]), OrderedDict([('intento', 3.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'magno'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.5)]), OrderedDict([('intento', 4.0), ('orientacion', 135.0), ('posicion_angular', 0.0), ('tipo', 'magno'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.25)]), OrderedDict([('intento', 5.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'magno'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.15)]), OrderedDict([('intento', 6.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'neutro'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.1)]), OrderedDict([('intento', 7.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'neutro'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.05)]), OrderedDict([('intento', 8.0), ('orientacion', 135.0), ('posicion_angular', 0.0), ('tipo', 'neutro'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.01)]), OrderedDict([('intento', 9.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'neutro'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 1.0)]), OrderedDict([('intento', 10.0), ('orientacion', 135.0), ('posicion_angular', 0.0), ('tipo', 'neutro'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.1)]), OrderedDict([('intento', 11.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'parvo'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.05)]), OrderedDict([('intento', 12.0), ('orientacion', 135.0), ('posicion_angular', 0.0), ('tipo', 'parvo'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.0)]), OrderedDict([('intento', 13.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'parvo'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.25)]), OrderedDict([('intento', 14.0), ('orientacion', 135.0), ('posicion_angular', 0.0), ('tipo', 'parvo'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.25)]), OrderedDict([('intento', 15.0), ('orientacion', 135.0), ('posicion_angular', 0.0), ('tipo', 'parvo'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.0)])]" valType="str"/>
      <Param name="conditionsFile" updates="None" val="BL2.csv" valType="file"/>
      <Param name="endPoints" updates="None" val="[0, 1]" valType="num"/>
      <Param name="isTrials" updates="None" val="True" valType="bool"/>
      <Param name="loopType" updates="None" val="sequential" valType="str"/>
      <Param name="nReps" updates="None" val="1" valType="num"/>
      <Param name="name" updates="None" val="trials" valType="code"/>
      <Param name="random seed" updates="None" val="" valType="code"/>
    </LoopInitiator>
    <Routine name="trial"/>
    <LoopTerminator name="trials"/>
  </Flow>
</PsychoPy2experiment>
