PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = eye_tracking_protocol_demo
  keyboardBackend = ioHub
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Routines
  Routine FIJACION_CENTRAL
    RoutineSettingsComponent FIJACION_CENTRAL
      disabled = True
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    CodeComponent end_of_routine
      Code Type = Auto->JS
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      Each Frame:
        if t>central_fixation_routine_time:
            continueRoutine = False
    CodeComponent GP_data_adq_backend
      Code Type = Py
      disabled = True
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      Begin Experiment:
        def convert_to_psychopy_units(FPOGX, FPOGY, screen_bounds):
            """
            Convierte las coordenadas normalizadas de Gazepoint a coordenadas centradas
            en el sistema de PsychoPy.

            Parámetros:
            - FPOGX: Coordenada X normalizada de Gazepoint (0 a 1)
            - FPOGY: Coordenada Y normalizada de Gazepoint (0 a 1)
            - screen_bounds: Límites de la pantalla en PsychoPy, donde los valores
              se definen como (x_min, y_max, x_max, y_min)

            Retorna:
            - Coordenadas X y Y centradas en el sistema de PsychoPy
            """

            x_min, y_max, x_max, y_min = screen_bounds

            # Mapeo de FPOGX (0.0 a 1.0) a PsychoPy (x_min a x_max)
            x_psychopy = x_min + (FPOGX * (x_max - x_min))

            # Mapeo de FPOGY (0.0 a 1.0) a PsychoPy (y_min a y_max)
            y_psychopy = -(y_min + (FPOGY * (y_max - y_min)))

            return x_psychopy, y_psychopy


        screen_bounds = (-0.89, 0.5, 0.89, -0.5)  # Definir los límites de la pantalla en unidades PsychoPy (x_min, y_max, x_max, y_min)
      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        #s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        #s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        FPOGX = -1
        FPOGY = -1

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("FPOGX") != -1):
                FPOGX = float(el.split("\"")[1])  # Coordenada X de la mirada
            if (el.find("FPOGY") != -1):
                FPOGY = float(el.split("\"")[1])  # Coordenada Y de la mirada

        x_psychopy, y_psychopy = convert_to_psychopy_units(FPOGX, FPOGY, screen_bounds)

        gaze_position = (x_psychopy, y_psychopy)

        GP_logs_2.text = f'FPOGX: {FPOGX:.2f}, FPOGY: {FPOGY:.2f}\nX = {x_psychopy:.2f}, Y = {y_psychopy:.2f}'
        GP_logs_3.text = f'FPOGX: {FPOGX:.2f}, FPOGY: {FPOGY:.2f}\nX = {x_psychopy:.2f}, Y = {y_psychopy:.2f}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    CodeComponent mouse_as_gaze
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse
        gaze_position = mouse.getPosition()
      Each Frame:
        gaze_position = mouse.getPosition()
        #logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')
    TextComponent logs_coordenadas_mirada
      disabled = True
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = white
      saveStartStop = False
      shape = circle
      size = tamanyo_estimulo
      startVal [time (s)] = 0.0
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    PolygonComponent gaze
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.45, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_2
      disabled = True
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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  Routine STATIC_VARIABLES
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import time
        import math
        import random
        from datetime import datetime

        # GLOBAL
        tamanyo_estimulo = (0.2, 0.2)

        tiempo_descanso = 3


        central_fixation_routine_time = 10


        visual_search_image_time = 5
        visual_search_wait_time = 0.5

        # SACADAS
        sacade_routine_time = 1
        pos1 = (0,0)
        pos2 = (-0.7,0)
        pos3 = (0.7,0.45)
        pos4 = (-0.7,-0.45)
        pos5 = (-0.7,0.45)
        pos6 = (0,0.45)

        positions_list = (pos1,pos2,pos3,pos4,pos5,pos6)

        # SEGUIMIENTO

        # LECTURA
        texto_lectura = "El perro corre por el parque. Los niños juegan con la pelota. Ana fue al mercado. Compró frutas frescas y un ramo de flores. Al volver a casa, preparó una ensalada para la cena. El sol brilla en el cielo. El cielo es azul. El viento mueve las hojas de los árboles.\n"

        # DVS
        dot_size            = 15/1000
        noise_dots_size     = 15#dot_size

        noise_dots_no       = 700
        dot_coherence       = 0.0
        #noise_dots_direction= 45.0
        #noise_coherent_motion = 0.0 # bool

        dot_speed           = 0.0075
        noise_dots_speed    = dot_speed

        dot_color           = 'red'
        noise_dots_color    = 'white'

        noise_dots_lifetime = 200
        field_size          = [1.5,1]
      Begin Experiment:
        noise_dots_coherence = 0.0
        noise_coherent_motion = 0.0 # bool
        noise_dots_direction= 45.0
        desvio = 0
      Begin Routine:
        thisExp.addData("baseTime", time.time())
  Routine SACADAS
    RoutineSettingsComponent SACADAS
      disabled = True
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    CodeComponent end_of_routine_2
      Code Type = Auto->JS
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      Each Frame:
        if t>sacade_routine_time:
            continueRoutine = False
    CodeComponent positions
      Code Type = Py
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      Begin Experiment:
        actual_position_index = 0
      Begin Routine:
        stim_time = 2
      Each Frame:
        # secuencia de movimientos
        step = 2
        if t>stim_time:
            actual_position_index+=1
            if actual_position_index >= len(positions_list):
                actual_position_index = 0
            print(f'{t}>{stim_time} - New index i = {actual_position_index}')
            stim_time += step
            print(f"New position: {positions_list[actual_position_index]}")
    PolygonComponent sacade_stimuli
      fillColor = -1.0000, -1.0000, 1.0000
      pos [set every frame] = positions_list[actual_position_index]
      saveStartStop = False
      shape = circle
      size = tamanyo_estimulo
      startVal [time (s)] = 0.0
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  Routine INSTRUCTIONS
    RoutineSettingsComponent INSTRUCTIONS
      disabled = True
      saveStartStop = False
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    ImageComponent logo_bio_2
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab_2
      image = images/compneuro_horizontal.png
      pos = (0.45, 0.35)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_title_2
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ANÁLISIS DE MOVIMIENTO OCULAR
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    TextComponent text_instructions_2
      letterHeight = 0.035
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        instruction_no = 0
        messages_instructions = [title]
        for i in range(1, 6):
            var_name = f"instruction_{i}"
            if var_name in globals():
                instruction = globals()[var_name]
                if instruction: # Si la instrucción no esta vacía se añade a la lista que aparecera por pantalla
                    messages_instructions.append(instruction)
        print(f'Lista de instrucciones cargada: {messages_instructions}')
      Each Frame:
        text_instructions_2.text = messages_instructions[instruction_no]

        if instruction_no == (len(messages_instructions) - 1):
            button_next_instruction_2.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction_2.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_no == 0:
            button_previous_instruction_2.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction_2.opacity = 1.0
            #button_previous_instruction.status = STARTED

        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vaciía (teoricamente)

        if 'space' in keys:
            continueRoutine = False
    ButtonComponent button_next_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_no < len(messages_instructions)-1:
            instruction_no+=1
    ButtonComponent button_previous_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_no:
            instruction_no-=1
    KeyboardComponent key_resp_skip_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine SEGUIMIENTO
    RoutineSettingsComponent SEGUIMIENTO
      disabled = True
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    PolygonComponent moving_stimuli
      fillColor = 1.0000, -0.0039, -0.3725
      saveStartStop = False
      shape = circle
      size = tamanyo_estimulo
      startVal [time (s)] = 0.0
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    CodeComponent movement_control_backend
      Code Type = Py
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      Begin Experiment:
        # Definir una lista de puntos [(x, y)] por los que pasará el estímulo
        puntos = [(-0.89, 0), (-0.5, 0.3), (0, 0), (0.5, -0.3), (0.89, 0)]

        # Índice del punto actual
        indice_punto = 0

        # Posición inicial
        moving_stimuli.pos = puntos[indice_punto]

        velocidad = 0.008  # Velocidad del movimiento
      Each Frame:
        # Obtener el siguiente punto de la lista
        siguiente_punto = puntos[indice_punto]

        # Calcular la dirección hacia el siguiente punto
        direccion = [siguiente_punto[0] - moving_stimuli.pos[0], siguiente_punto[1] - moving_stimuli.pos[1]]

        # Normalizar la dirección
        norma = (direccion[0]**2 + direccion[1]**2) ** 0.5
        if norma > 0:
            direccion_normalizada = [direccion[0] / norma, direccion[1] / norma]
        else:
            direccion_normalizada = [0, 0]

        # Mover el estímulo hacia el siguiente punto
        moving_stimuli.pos = [moving_stimuli.pos[0] + direccion_normalizada[0] * velocidad,
                              moving_stimuli.pos[1] + direccion_normalizada[1] * velocidad]

        # Verificar si el estímulo ha alcanzado el siguiente punto
        if norma < 0.05:  # Tolerancia para considerar que ha llegado al punto
            indice_punto += 1
            if indice_punto >= len(puntos):
                indice_punto = 0  # Reiniciar a la primera posición
    CodeComponent end_of_routine_3
      Code Type = Auto->JS
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      Each Frame:
        if t>sacade_routine_time:
            continueRoutine = False
  Routine LECTURA
    RoutineSettingsComponent LECTURA
      disabled = True
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    CodeComponent end_of_routine_4
      Code Type = Auto->JS
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      Each Frame:
        if t>sacade_routine_time:
            continueRoutine = False
    TextComponent text_lectura
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $texto_lectura
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    CodeComponent text_config
      Code Type = Py
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      Begin Routine:
        # Tamaño de la letra
        text_lectura.height = 0.05
        text_lectura.alignHoriz = 'left'
        text_lectura.color = 'white'
  Routine DESCANSO
    RoutineSettingsComponent DESCANSO
      disabled = True
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tiempo_descanso
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      text [set every frame]:
        $str(tiempo_descanso-int(t))
    TextComponent texto_descanso
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tiempo_descanso
      text = Descanso
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tiempo_descanso
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  Routine VISUAL_SEARCH
    RoutineSettingsComponent VISUAL_SEARCH
      disabled = True
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    CodeComponent end_of_routine_5
      Code Type = Auto->JS
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      Each Frame:
        if t>visual_search_image_time + visual_search_wait_time:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    ImageComponent image
      image [set every repeat] = $path
      size = (1920*2/1920, 1080*2/1920)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = visual_search_image_time
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  Routine DVS
    RoutineSettingsComponent DVS
      disabled = True
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    DotsComponent dots
      coherence = noise_dots_coherence
      color = $noise_dots_color
      dir = 0.0
      dotLife = noise_dots_lifetime
      dotSize = noise_dots_size
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = field_size
      nDots = noise_dots_no
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = noise_dots_speed
      startVal [time (s)] = 0.0
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    PolygonComponent dot
      fillColor = $dot_color
      lineColor = $dot_color
      shape = circle
      size = dot_size
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import numpy as np

        def move_dot_smooth(dot, dot_speed, field_size, current_angle, frames_in_direction, frame_count):
            """
            Mueve el punto 'dot' de forma suave dentro de los límites de la pantalla.

            dot: objeto visual de PsychoPy que se va a mover.
            dot_speed: velocidad del punto.
            field_size: tamaño del campo [ancho, alto] en unidades de PsychoPy.
            current_angle: ángulo actual de la dirección del punto.
            frames_in_direction: número de frames en los que el punto mantiene la misma dirección.
            frame_count: contador de frames que indica cuántos frames han pasado en la dirección actual.

            Returns:
            - new_angle: El ángulo actualizado para la próxima llamada.
            - frame_count: El contador de frames actualizado.
            """
            # Si hemos alcanzado el límite de frames para la dirección actual, cambiamos el ángulo
            if frame_count >= frames_in_direction:
                # Elegir un nuevo ángulo aleatorio cercano al actual para mantener la suavidad
                current_angle += np.random.uniform(-np.pi/8, np.pi/8)
                frame_count = 0  # Reiniciar el contador de frames en la nueva dirección
            else:
                frame_count += 1

            # Calcular el desplazamiento basado en el ángulo
            dx = dot_speed * np.cos(current_angle)
            dy = dot_speed * np.sin(current_angle)

            # Calcular la nueva posición
            new_x = dot.pos[0] + dx
            new_y = dot.pos[1] + dy

            # Verificar los límites de la pantalla y ajustar si es necesario
            if new_x < -field_size[0]/2:
                new_x = -field_size[0]/2
                current_angle = np.pi - current_angle  # Invertir dirección horizontal
            elif new_x > field_size[0]/2:
                new_x = field_size[0]/2
                current_angle = np.pi - current_angle

            if new_y < -field_size[1]/2:
                new_y = -field_size[1]/2
                current_angle = -current_angle  # Invertir dirección vertical
            elif new_y > field_size[1]/2:
                new_y = field_size[1]/2
                current_angle = -current_angle

            # Actualizar la posición del punto
            dot.pos = (new_x, new_y)

            return current_angle, frame_count
      Begin Routine:
        current_angle = np.random.uniform(0, 2 * np.pi)  # Ángulo inicial aleatorio
        frame_count = 0
        frames_in_direction = 20  # Ajusta según la duración que desees para cada dirección
      Each Frame:
        # Dentro del bucle de cada frame
        current_angle, frame_count = move_dot_smooth(dot, dot_speed, field_size, current_angle, frames_in_direction, frame_count)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WHERE_S_WALDO
    RoutineSettingsComponent WHERE_S_WALDO
      disabled = True
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    ImageComponent image_waldo
      image [set every repeat] = $path
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DVS_COHERENCE
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    DotsComponent dots_2
      coherence = noise_dots_coherence
      color = $noise_dots_color
      dir [set every frame] = noise_dots_direction
      dotLife = noise_dots_lifetime
      dotSize = noise_dots_size
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [field_size[0]+0.5,field_size[1]+0.5]
      nDots = noise_dots_no
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = noise_dots_speed
      startVal [time (s)] = 0.0
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    PolygonComponent dot_2
      fillColor = -0.2000, -0.2000, -0.2000
      lineColor = $dot_color
      shape = circle
      size = dot_size
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        import numpy as np

        def move_dot_smooth(dot, dot_speed, field_size, current_angle, frames_in_direction, frame_count):
            """
            Mueve el punto 'dot' de forma suave dentro de los límites de la pantalla.

            dot: objeto visual de PsychoPy que se va a mover.
            dot_speed: velocidad del punto.
            field_size: tamaño del campo [ancho, alto] en unidades de PsychoPy.
            current_angle: ángulo actual de la dirección del punto.
            frames_in_direction: número de frames en los que el punto mantiene la misma dirección.
            frame_count: contador de frames que indica cuántos frames han pasado en la dirección actual.

            Returns:
            - new_angle: El ángulo actualizado para la próxima llamada.
            - frame_count: El contador de frames actualizado.
            """
            # Si hemos alcanzado el límite de frames para la dirección actual, cambiamos el ángulo
            if frame_count >= frames_in_direction:
                # Elegir un nuevo ángulo aleatorio cercano al actual para mantener la suavidad
                current_angle += np.random.uniform(-np.pi/8, np.pi/8)
                frame_count = 0  # Reiniciar el contador de frames en la nueva dirección
            else:
                frame_count += 1

            # Calcular el desplazamiento basado en el ángulo
            dx = dot_speed * np.cos(current_angle)
            dy = dot_speed * np.sin(current_angle)

            # Calcular la nueva posición
            new_x = dot.pos[0] + dx
            new_y = dot.pos[1] + dy

            # Verificar los límites de la pantalla y ajustar si es necesario
            if new_x < -field_size[0]/2:
                new_x = -field_size[0]/2
                current_angle = np.pi - current_angle  # Invertir dirección horizontal
            elif new_x > field_size[0]/2:
                new_x = field_size[0]/2
                current_angle = np.pi - current_angle

            if new_y < -field_size[1]/2:
                new_y = -field_size[1]/2
                current_angle = -current_angle  # Invertir dirección vertical
            elif new_y > field_size[1]/2:
                new_y = field_size[1]/2
                current_angle = -current_angle

            # Actualizar la posición del punto
            dot.pos = (new_x, new_y)

            return current_angle, frame_count

        def move_dot_lateral(dot, dot_speed, field_size, direction, frame_count):
            """
            Mueve el punto 'dot' de forma lineal lateral (derecha a izquierda) dentro de los límites del campo definido.

            dot: objeto visual de PsychoPy que se va a mover.
            dot_speed: velocidad del punto.
            field_size: tamaño del campo [ancho, alto] en unidades de PsychoPy.
            direction: dirección actual del movimiento, 1 para derecha y -1 para izquierda.
            frame_count: contador de frames que indica cuántos frames han pasado.

            Returns:
            - direction: La dirección actualizada para la próxima llamada.
            - frame_count: El contador de frames actualizado.
            """
            # Calcular el desplazamiento basado en la dirección
            dx = dot_speed * direction
            new_x = dot.pos[0] + dx
            new_y = dot.pos[1]  # Mantener y constante

            # Verificar los límites de la pantalla en el eje x y ajustar si es necesario
            if new_x < -field_size[0] / 2:
                new_x = -field_size[0] / 2
                direction *= -1  # Cambiar de dirección
            elif new_x > field_size[0] / 2:
                new_x = field_size[0] / 2
                direction *= -1  # Cambiar de dirección

            # Actualizar la posición del punto
            dot.pos = (new_x, new_y)

            return direction, frame_count + 1
      Begin Routine:
        current_angle = np.random.uniform(0, 2 * np.pi)  # Ángulo inicial aleatorio
        frame_count = 0
        frames_in_direction = 20  # Ajusta según la duración que desees para cada dirección
        direction = 1 # start value of direction to te right
        mode = 3 # behaviour of the stimuli and noise dots 1... 2... 3: Move noise with stimuli. 4:...
      Each Frame:
        # Dentro del bucle de cada frame

        #if  mode == 1: # movimiento random del estimulo. Cuando cambia la coherencia del ruido el estimulo se mantiene igual
        #    current_angle, frame_count = move_dot_smooth(dot_2, dot_speed, field_size, current_angle, frames_in_direction, frame_count)

        #elif mode == 2: # movimiento lateral del estimulo. Cuando cambia la coherencia del ruido el estimulo se mantiene igual
        #    direction, frame_count = move_dot_lateral(dot_2, dot_speed, field_size, direction, frame_count)

        if mode == 3:
            current_angle, frame_count = move_dot_smooth(dot_2, dot_speed, field_size, current_angle, frames_in_direction, frame_count)

            if noise_coherent_motion: # Move noise with stimuli
                if frame_count % frames_in_direction*5 == 0: # each 100 frames change angle
                    desvio = random.uniform(-20, 20)
                noise_dots_direction = math.degrees(current_angle) + desvio

        elif mode == 4:
            if noise_coherent_motion: # True
                direction, frame_count = move_dot_lateral(dot_2, dot_speed, field_size, direction, frame_count)
            else:
                current_angle, frame_count = move_dot_smooth(dot_2, dot_speed, field_size, current_angle, frames_in_direction, frame_count)

        # FLANCOS ASCENDENTE Y DESCENDENTE - Cambiar la coherencia del ruido segun el tiempo
        if t>3 and t<10:
            if not noise_coherent_motion:
                dots_2.setFieldCoherence(1)
                noise_coherent_motion = 1
                #noise_dots_direction = 90
        elif t>13 and t<20:
            if not noise_coherent_motion:
                dots_2.setFieldCoherence(1)
                noise_coherent_motion = 1
                noise_dots_direction = 0
                current_angle = 0
                direction = 1
                mode = 4
        else:
            if noise_coherent_motion:
                dots_2.setFieldCoherence(0)
                noise_coherent_motion = 0
                #noise_dots_direction = 0
            elif t>25:
                continueRoutine = False
Flow
  Routine STATIC_VARIABLES
  LoopInitiator instructions loopType="TrialHandler"
    conditions = [{'title': 'SPATIAL FREQUENCY THRESHOLD STAIRCASE TEST', 'instruction_1': 'En este experimento, evaluaremos tu capacidad para percibir las líneas de un patrón visual conocido como parche de Gabor', 'instruction_2': 'Observa la pantalla: Aparecerá un patrón de líneas', 'instruction_3': 'Si puedes ver las líneas del patrón, pulsa la tecla S. Si no puedes ver las líneas (parece una imagen borrosa o uniforme), pulsa la tecla N.', 'instruction_4': 'No te preocupes por acertar, lo importante es que indiques lo que ves.', 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}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
    conditionsFile = instructions/instructions_1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator instructions
  Routine FIJACION_CENTRAL
  Routine DESCANSO
  Routine SACADAS
  Routine DESCANSO
  Routine SEGUIMIENTO
  Routine DESCANSO
  Routine LECTURA
  Routine DESCANSO
  LoopInitiator visual_search_imgs loopType="TrialHandler"
    Selected rows = 1:10
    conditionsFile = loop_images.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\bathroom_23_c_l_toiletpaper.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\bedroom_10_c_l_hanger.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\bedroom_20_i_sr_bleach.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\bedroom_27_i_r_pingpongpaddle.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\bedroom_4_c_r_lamp.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\bedroom_8_i_l_sieve.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\kitchen_8_i_sl_mouse.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\office_1_i_l_rollingpin.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\office_23_i_sl_toycar.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\office_30_c_sl_book.jpg'},
      {'path': 'c:\\Users\\akoun\\Desktop\\Biocruces\\siburmuin\\src\\eye_tracking_test\\images\\visual_search\\waitingroom_12_i_sl_belt.jpg'}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
    Routine VISUAL_SEARCH
  LoopTerminator visual_search_imgs
  Routine DVS
  Routine DVS_COHERENCE
  LoopInitiator waldo_imgs loopType="TrialHandler"
    conditionsFile = waldo_images.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'path': '.\\images\\find_waldo\\1.jpg'},
      {'path': '.\\images\\find_waldo\\2.jpg'}]
    Routine WHERE_S_WALDO
  LoopTerminator waldo_imgs
