PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -0.0745, 0.0000
  expName = multicolor_grating_demo
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        from PIL import Image
        import matplotlib.pyplot as plt


        def save_gabor_patch_image(frequency, size, c1, c2):
            amp, f = generate_gabor_patch(frequency, size)

            # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia
            c1 = np.array(c1)
            c2 = np.array(c2)

            # Calcular los valores de color para el parche
            im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))

            # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo
            alpha_channel = f

            # Combinar los valores RGB con el canal alfa para crear una imagen RGBA
            im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))

            # Convertir a imagen
            im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')
            im.save(f"./images/custom_stim.png")

        def generate_gabor_patch(frequency, size):
            im_range = np.arange(size)
            x, y = np.meshgrid(im_range, im_range)
            dx = x - size // 2
            dy = y - size // 2
            t = np.arctan2(dy, dx)
            r = np.sqrt(dx ** 2 + dy ** 2)
            x = r * np.cos(t)
            y = r * np.sin(t)

            # Transición brusca para los colores (líneas) en el patrón Gabor
            amp = np.where(np.cos(2 * np.pi * (x * frequency)) >= 0, 1, 0)
            f = np.where(r <= size // 2, 1, 0)

            return amp, f
      Begin Routine:
        import random

        def random_color():
            return (random.random(), random.random(), random.random())

        def random_frequency():
            return random.uniform(0.01, 0.1)

        # Parámetros aleatorios
        frequency = random_frequency()
        size = 500
        c1 = random_color()
        c2 = random_color()

        logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor
        save_gabor_patch_image(frequency, size, c1, c2)
    ImageComponent image
      image [set every repeat] = .\images\custom_stim.png
      ori = 20
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent logs
      letterHeight = 0.025
      pos = (0.6, 0.35)
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine trial
  LoopTerminator trials
