PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = circle
  keyboardBackend = ioHub
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Routines
  Routine trial
    RoutineSettingsComponent trial
      disabled = True
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    GratingComponent grating_1
      mask = circle
      ori [set every frame] = -t*10
      phase = 0.5
      pos [set every frame] = (sin(t)*.5, 0.35)
      saveStartStop = False
      sf = 10
      size = 0.2
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_2
      mask = circle
      ori [set every frame] = t*10
      phase = 0.5
      pos [set every frame] = (sin(t)*.5, 0)
      sf = 10
      size = 0.2
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_3
      mask = circle
      ori [set every frame] = -t*10
      phase = 0.5
      pos [set every frame] = (sin(t)*.5, -0.35)
      saveStartStop = False
      sf = 10
      size = 0.2
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
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    GratingComponent grating_4
      mask = circle
      ori [set every frame] = -t*20
      phase = 0.5
      pos [set every frame] = (sin(t)*.25, 0.35)
      saveStartStop = False
      sf = 10
      size = 0.2
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_5
      mask = circle
      ori [set every frame] = t*20
      phase = 0.5
      pos [set every frame] = (sin(t)*.25, 0)
      sf = 10
      size = 0.2
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_6
      mask = circle
      ori [set every frame] = -t*20
      phase = 0.5
      pos [set every frame] = (sin(t)*.25, -0.35)
      saveStartStop = False
      sf = 10
      size = 0.2
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    TextComponent text
      letterHeight = 0.05
      pos = (0.5,0.35)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        ${'%.f' % t}
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0.5,0.15)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        ${'%.1f' % (t*20)}
    TextComponent text_3
      letterHeight = 0.05
      pos = (0.5,0.0)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        DEG/SEG: 20º
Flow
  Routine trial
  Routine trial2
