PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = pallete
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine instructions
    RoutineSettingsComponent instructions
      disabled = True
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    ImageComponent logo_bio
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab
      image = images/compneuro_horizontal.png
      pos = (0.45, 0.35)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_title
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TEST DE EVALUACIÓN DE LOS SISTEMAS MAGNOCELULAR Y PARVOCELULAR
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    TextComponent text_instructions
      letterHeight = 0.035
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        instruction_no = 0
        messages_instructions = ["Paleta de configuraciones de estímulos",
        "NO es una prueba funcional."]
      Begin Experiment:
        #text_instructions.alignHoriz='left'
        #text_instructions.wrapWidth=1.0
        instruction_no = 0
      Each Frame:
        text_instructions.text = messages_instructions[instruction_no]

        if instruction_no == (len(messages_instructions) - 1):
            button_next_instruction.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_no == 0:
            button_previous_instruction.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction.opacity = 1.0
            #button_previous_instruction.status = STARTED

        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vaciía (teoricamente)

        if 'space' in keys:
            continueRoutine = False
    ButtonComponent button_next_instruction
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_no < len(messages_instructions)-1:
            instruction_no+=1
    ButtonComponent button_previous_instruction
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_no:
            instruction_no-=1
    KeyboardComponent key_resp_skip_instructions
      allowedKeys = 'space'
      disabled = True
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine pallete
    RoutineSettingsComponent pallete
      disabled = True
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating_1,
        grating_2,
        grating_3,
        grating_4,
        grating_5,
        grating_6]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        contrasts = [
        0,
        0.2,
        0.4,
        0.6,
        0.8,
        1.0
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10
            grating.contrast = contrasts[i]
    TextComponent logs_3
      letterHeight = 0.025
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    GratingComponent grating_1
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_2
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_5
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_6
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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  Routine pallete_contrast
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating,
        grating_7,
        grating_8,
        grating_9,
        grating_10,
        grating_11
        ]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        contrasts = [
        -1,
        0.2,
        0.4,
        0.6,
        0.8,
        1.0
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10
            grating.contrast = contrasts[i]
            grating.texture = 'sqr'

        text1.text = f"contrast # {contrasts}"
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    GratingComponent grating
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sqr
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    GratingComponent grating_7
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_8
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_9
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_10
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_11
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sqr
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    TextComponent text1
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine pallete_phase
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating_12,
        grating_13,
        grating_14,
        grating_15,
        grating_16,
        grating_17]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        phase = [
        0,
        0.1,
        0.2,
        0.3,
        0.4,
        0.5
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 5

        text4.text = f"Phase # {phase}"
      Each Frame:
        for index, stim in enumerate(gratings):
            stim.setPhase(phase[index],'+')
            stim.draw()
    TextComponent text4
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    GratingComponent grating_12
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_13
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_14
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_15
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_16
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_17
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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  Routine pallete_opacity
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating_18,
        grating_19,
        grating_20,
        grating_21,
        grating_22,
        grating_23]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        opacity = [
        0,
        0.2,
        0.4,
        0.6,
        0.8,
        1.0
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 5
            grating.opacity = opacity[i]

        text2.text = f"opacity # {opacity}"
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    GratingComponent grating_18
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_19
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_20
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_21
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_22
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_23
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    TextComponent text2
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine pallete_rotation
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating_24,
        grating_25,
        grating_26,
        grating_27,
        grating_28,
        grating_29]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        angles = [
        0,
        30,
        60,
        90,
        120,
        150
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10
            grating.ori = angles[i]

        text5.text = f"Rotation # {angles}ºDEG"
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text5
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent grating_24
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_25
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_26
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_27
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_28
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_29
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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  Routine pallete_spatial_freq
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating_30,
        grating_31,
        grating_32,
        grating_33,
        grating_34,
        grating_35]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        spatial_freqs = [
        100,
        200,
        300,
        400,
        500,
        600
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = spatial_freqs[i]

        text3.text = f"spatial frequency # {spatial_freqs}"
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text3
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent grating_30
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_31
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_32
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_33
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_34
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_35
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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  Routine pallete_dynamic_rotation
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating_36,
        grating_37,
        grating_38,
        grating_39,
        grating_40,
        grating_41]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        angles = [
        0,
        0,
        0,
        0,
        0,
        0
        ]

        angular_speeds = [
        0,
        2,
        4,
        6,
        8,
        10
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10

        text6.text = f"Rotation speeds # {angular_speeds}ºDEG/s"
      Each Frame:
        for i, grating in enumerate(gratings):
            angles[i] = angles[i] + angular_speeds[i]
            grating.ori = angles[i]
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text6
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent grating_36
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_37
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_38
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_39
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_40
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_41
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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  Routine pallete_FFT
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    CodeComponent code_12
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Routine:
        gratings = [
        grating_42,
        grating_43,
        grating_44,
        grating_45,
        grating_46,
        grating_47]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        FFT_frequencies = [
        1,
        5,
        10,
        15,
        20,
        25
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10

        text7.text = f"FFTs # {FFT_frequencies}Hz"
      Each Frame:
        for i, grating in enumerate(gratings):
            frames_por_ciclo = int((frecuencia_monitor / FFT_frequencies[i]) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
            grating.opacity = opacidad
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text7
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent grating_42
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_43
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_44
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_45
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_46
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_47
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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  Routine pallete_excentricity_A
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        import math

        fixation_position = (0,0)

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m


        def calcular_posicion_stim(fixation_position, angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            stim_x = fixation_position[0] + stim_x
            stim_y = fixation_position[1] + stim_y

            return stim_x, stim_y
      Begin Routine:
        fixation_position = (0,0)

        gratings = [
        grating_48,
        grating_49,
        grating_50,
        grating_51,
        grating_52,
        grating_53]

        radius_list = [
        radius_1,
        radius_2,
        radius_3,
        radius_4,
        radius_5,
        radius_6]

        excentricity_angles = [
        5,
        10,
        15,
        20,
        25,
        30
        ]

        position_angles = [
        0,
        0,
        0,
        0,
        0,
        0
        ]

        positions = [
        calcular_posicion_stim(fixation_position, position_angles[0], excentricity_angles[0], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[1], excentricity_angles[1], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[2], excentricity_angles[2], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[3], excentricity_angles[3], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[4], excentricity_angles[4], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[5], excentricity_angles[5], 0.295)
        ]


        for i, radius in enumerate(radius_list):
            diam, _ = calculate_diameter(excentricity_angles[i], 0.65, 0.295)
            radius.size = (diam, diam)

        for i, grating in enumerate(gratings):
            grating.size = (0.15, 0.15)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10

        text8.text = f"Excentricity # {excentricity_angles}ºDEG\nPosition Angle # {position_angles}ºDEG"
    PolygonComponent radius_6
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius_5
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius_4
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius_3
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius_1
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    GratingComponent grating_48
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_49
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_50
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_51
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_52
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_53
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    PolygonComponent fixation_point
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text8
      letterHeight = 0.025
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine pallete_excentricity_B
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Experiment:
        import math

        fixation_position = (-0.7,-0.45)

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m


        def calcular_posicion_stim(fixation_position, angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            stim_x = fixation_position[0] + stim_x
            stim_y = fixation_position[1] + stim_y

            return stim_x, stim_y
      Begin Routine:
        fixation_position = (-0.7,-0.45)

        gratings = [
        grating_54,
        grating_55,
        grating_56,
        grating_57,
        grating_58,
        grating_59]

        radius_list = [
        radius,
        radius_7,
        radius_8,
        radius_9,
        radius_10,
        radius_11]

        excentricity_angles = [
        5,
        10,
        15,
        20,
        25,
        30
        ]

        position_angles = [
        0,
        30,
        45,
        75,
        90,
        45
        ]

        positions = [
        calcular_posicion_stim(fixation_position, position_angles[0], excentricity_angles[0], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[1], excentricity_angles[1], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[2], excentricity_angles[2], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[3], excentricity_angles[3], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[4], excentricity_angles[4], 0.295),
        calcular_posicion_stim(fixation_position, position_angles[5], excentricity_angles[5], 0.295)
        ]


        for i, radius in enumerate(radius_list):
            diam, _ = calculate_diameter(excentricity_angles[i], 0.65, 0.295)
            radius.size = (diam, diam)

        for i, grating in enumerate(gratings):
            grating.size = (0.15, 0.15)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10

        text9.text = f"Excentricity # {excentricity_angles}ºDEG\nPosition Angle # {position_angles}ºDEG"
    PolygonComponent radius_11
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius_10
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius_9
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius_8
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius_7
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    PolygonComponent radius
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      startVal [time (s)] = 0.0
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    GratingComponent grating_54
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_55
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_56
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_57
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_58
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_59
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    PolygonComponent fixation_point_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos = fixation_position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text9
      letterHeight = 0.025
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine pallete_textures
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating_60,
        grating_61,
        grating_62,
        grating_63,
        grating_64,
        grating_65]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        textures = [
        'sin',
        'sqr',
        'sinXsin',
        'None'
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10

        text10.text = f"Textures # {textures}"
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text10
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent grating_60
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    GratingComponent grating_61
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sqr
      texture resolution = 512
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    GratingComponent grating_62
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sinXsin
      texture resolution = 512
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    GratingComponent grating_63
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = None
      texture resolution = 512
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    GratingComponent grating_64
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_65
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = None
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  Routine pallete_noise
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating_66,
        grating_67,
        grating_68,
        grating_72,
        grating_70,
        grating_71]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        angles = [
        0,
        30,
        60,
        90,
        120,
        150
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10
            grating.ori = angles[i]

        text11.text = f"Rotation # {angles}ºDEG"
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text11
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent grating_66
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_67
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_68
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_70
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_71
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_72
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    DotsComponent dots
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 25000
      noiseDots = position
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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    DotsComponent dots_2
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 25000
      noiseDots = position
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.0
      startVal [time (s)] = 0.0
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Flow
  Routine pallete
  Routine instructions
  Routine pallete_noise
  Routine pallete_contrast
  Routine pallete_opacity
  Routine pallete_spatial_freq
  Routine pallete_phase
  Routine pallete_rotation
  Routine pallete_dynamic_rotation
  Routine pallete_FFT
  Routine pallete_excentricity_A
  Routine pallete_excentricity_B
  Routine pallete_textures
