PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = test_percepcion_velocidad_aceleracion_y_trayectoria
  keyboardBackend = ioHub
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Routines
  Routine wait
    RoutineSettingsComponent wait
      disabled = True
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    PolygonComponent tunel_2
      fillColor = white
      pos [set every frame] = (0+distancia_estimulo_tunel, referencia_tierra)
      shape = rectangle
      size [set every frame] = (anchura_tunel/100, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = white
      pos [set every frame] = (-0.65, referencia_tierra+stim_size/2)
      shape = circle
      size = (stim_size, stim_size)
      startVal [time (s)] = 0.0
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    PolygonComponent ground
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, referencia_tierra-(1/2))
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vaciía (teoricamente)

        if 'space' in keys: # No solo se tiene que dar el evento, sino que se tiene que dar en la rutina. Si viene dado de la rutina anterior no cuenta.
            continueRoutine = False
  Routine start
    RoutineSettingsComponent start
      disabled = True
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    PolygonComponent stim
      fillColor = white
      pos [set every frame] = (-0.65 + desplazamiento, referencia_tierra+stim_size/2)
      saveStartStop = False
      shape = circle
      size = (stim_size, stim_size)
      startVal [time (s)] = 0.0
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    PolygonComponent tunel
      fillColor = white
      pos [set every frame] = (0+distancia_estimulo_tunel, referencia_tierra)
      shape = rectangle
      size [set every frame] = (anchura_tunel/100, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent ground_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, referencia_tierra-(1/2))
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Before Experiment:
        referencia_tierra = 0.0# -0.2 para partir de la base de la pantalla. 0.2 parte superior de la pantalla.
        stim_size = 0.055
        #anchura_tunel = 100 # % del area máxima del tunel
        stop = False
      Before JS Experiment:
        referencia_tierra = 0.0;
        area_box = 100;
        distancia_estimulo_tunel = 0.3;
      Begin Experiment:
        #velocidad = 1/10 # TODO: algoritmo cálculo de velocidad para cada iteración
        tunel.opacity = 1
      Begin JS Routine:
        desplazamiento = 0;
        velocidad = 0;
      Begin Routine:
        desplazamiento = 0
        stop = False
        tunel.opacity = 1
      Each Frame:
        if stop:
            pass
        else:
            desplazamiento = t*velocidad_2

        # Obtiene la posición en X de 'stim'
        stim_x = stim.pos[0]

        # Obtiene la posición en X del centro de 'box' y calcula la posición del borde derecho
        box_right_edge_x = tunel.pos[0] + tunel.size[0] / 2

        # Calcula la distancia al borde derecho de 'box'
        distance_to_right_edge = box_right_edge_x - stim_x

        # Actualiza el componente de texto con la distancia al borde derecho
        text.setText(f"referencia_tierra: {referencia_tierra:.2f}\nDistancia: {distance_to_right_edge:.2f}\n Velocidad: {velocidad:.2f}\n Anchura tunel (%): {anchura_tunel:.2f}\n Distancia inicial: {distancia_estimulo_tunel:.2f}\n")

        tunel_right_edge_x = tunel.pos[0] + tunel.size[0] / 2

        # Hacer el estímulo invisible antes de salir por el túnel
        if stim_x > tunel_right_edge_x - 0.1 and not stop:
            stim.opacity = 0.0


        ####################################################
        ###################____EVENTS____###################
        ####################################################

        # Verifica si se ha presionado la tecla Space
        keys = event.getKeys()
        if 'space' in keys:
            if stop:    # Si ya se habia parado, el siguiente evento es para saltar de rutina
                continueRoutine = False
            else:       # Primera vez que se pulsa la barra: parar estimulo y calcular errores
                stop = True
                #velocidad_2 = 0
                tunel.opacity = 0.3
                stim.opacity = 1.0
      Each JS Frame:
        velocidad = (1 / 10);
        desplazamiento = (t * velocidad);
        stim_x = stim.pos[0];
        box_right_edge_x = (box.pos[0] + (box.size[0] / 2));
        distance_to_right_edge = (box_right_edge_x - stim_x);
        text.setText(`Distancia: ${util.pad(Number.parseFloat(distance_to_right_edge).toFixed(2), 1)}
        Velocidad: ${util.pad(Number.parseFloat(velocidad).toFixed(2), 1)}`
        );
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine testt
    RoutineSettingsComponent testt
      disabled = True
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0.5, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        referencia_tierra = -0.2
      Each Frame:
        text_2.setText(f"Distancia: {distancia_estimulo_tunel:.2f}\n Velocidad: {velocidad:.2f}\n anchura_tunel: {anchura_tunel:.2f}\n Aceleracion: {aceleracion:.2f}\n ")
    PolygonComponent polygon_2
      fillColor = white
      shape = rectangle
      size [set every frame] = (0.8*anchura_tunel/100, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine tiro_parabolico
    RoutineSettingsComponent tiro_parabolico
      disabled = True
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    PolygonComponent tunel_3
      fillColor = white
      pos [set every frame] = (0, referencia_tierra)
      shape = rectangle
      size [set every frame] = (anchura_tunel/100, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent ground_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, referencia_tierra-(0.3/2))
      shape = rectangle
      size = (2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Before Experiment:
        import math

        referencia_tierra = -0.4 # -0.2 para partir de la base de la pantalla. 0.2 parte superior de la pantalla.
        #anchura_tunel = 100 # % del area máxima del tunel

        #distancia_estimulo_tunel = 0.3 # depende del tamaño del tunel. Se añade esta distancia que desplaza el tunel a la derecha. Valor máximo recomendado aprox. 0.5
        g = 4.9
      Before JS Experiment:
        referencia_tierra = 0.2;
        area_box = 100;
        distancia_estimulo_tunel = 0.3;
        4.9
      Begin Experiment:
        #velocidad = 1/10 # TODO: algoritmo cálculo de velocidad para cada iteración
        tunel_3.opacity = 0.5

        posicion_x = 0
        posicion_y = 0
      Begin JS Routine:
        desplazamiento = 0;
        velocidad = 0;
      Begin Routine:
        stop = False
        detener_bola = False
        desplazamiento = 0
        tunel_3.opacity = 0.5

        # Calcular las componentes de la velocidad
        theta_radians = math.radians(angulo)
        velocidad_x = velocidad * math.cos(theta_radians)
        velocidad_y = velocidad * math.sin(theta_radians)
      Each Frame:
        if stop:
            posicion_x = 0
            posicion_y = 0

        elif detener_bola:
            posicion_x = posicion_x
            posicion_y = posicion_y

        else: # Calcular posicion segun formula de tiro parabolico
            posicion_x = (t*velocidad_x) + posicion_x
            posicion_y = (t*velocidad_y) - (0.5*g*t*t) + posicion_y

        # Actualiza el componente de texto con la distancia al borde derecho
        text_4.setText(f"Angulo disparo: {angulo:.2f}\n Velocidad: {velocidad:.2f}\n Velocidad_x: {velocidad_x:.2f}\n Velocidad_y: {velocidad_y:.2f}\n posicion_x: {posicion_x:.2f}\n posicion_y: {posicion_y:.2f}\nStop: {stop:.2f}\n ")


        ####################################################
        ###################____EVENTS____###################
        ####################################################

        # Detiene el estimulo si toca tierra en la caida
        if posicion_y < 0:
            detener_bola = True

        # STOP: Verifica si se ha presionado la tecla Enter (Intro)
        keys = event.getKeys()
        if 'return' in keys:
            stop = True
            #velocidad_2 = 0
            tunel_3.opacity = 0.3
            stim_2.opacity = 1.0
      Each JS Frame:
        velocidad = (1 / 10);
        desplazamiento = (t * velocidad);
        stim_x = stim.pos[0];
        box_right_edge_x = (box.pos[0] + (box.size[0] / 2));
        distance_to_right_edge = (box_right_edge_x - stim_x);
        text.setText(`Distancia: ${util.pad(Number.parseFloat(distance_to_right_edge).toFixed(2), 1)}
        Velocidad: ${util.pad(Number.parseFloat(velocidad).toFixed(2), 1)}`
        );
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent stim_2
      fillColor = -0.6157, 0.5608, -0.6235
      pos [set every frame] = (-0.65 + posicion_x, referencia_tierra + 0.01 + posicion_y)
      saveStartStop = False
      shape = circle
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
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  Routine instructions
    RoutineSettingsComponent instructions
      disabled = True
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    ImageComponent logo_bio
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab
      image = images/compneuro_horizontal.png
      pos = (0.45, 0.35)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_title
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TEST DE PERCEPCIÓN DE VELOCIDAD, ACELERACIÓN Y TRAYECTORIA
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    TextComponent text_instructions
      letterHeight = 0.035
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        instruction_no = 0
        messages_instructions = ["Bienvenido/a al Test de Percepción de Velocidad y Aceleración. En este test, observarás varios estímulos en movimiento y se te pedirá que realices ciertas tareas relacionadas con la percepción de su trayectoria, velocidad y aceleración.",
        "En primer lugar, vas a ver un estímulo (una circunferencia) que se mueve de izquierda a derecha y atraviesa una pared o un túnel. Tu función en el test es tratar de predecir cuando la circunferencia (estímulo) va a salir por la parte derecha del túnel. Debes pulsar la barra espaciadora cuando creas que se va a dar el momento.",
        "Al pulsar la barra espaciadora, el túnel se va a poner transparente y la bola inicial va a aparecer (dentro o fuera del tunel) para que veas lo cerca que te has quedado de acertar.",
        "Comenzamos con una prueba antes de registrar los resultados.",
        "Pulsa la barra espaciadora cuando estes preparado/a. Si tienes dudas, ¡pregunta!."]
      Begin Experiment:
        #text_instructions.alignHoriz='left'
        #text_instructions.wrapWidth=1.0
        instruction_no = 0
      Each Frame:
        text_instructions.text = messages_instructions[instruction_no]

        if instruction_no == (len(messages_instructions) - 1):
            button_next_instruction.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_no == 0:
            button_previous_instruction.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction.opacity = 1.0
            #button_previous_instruction.status = STARTED

        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vaciía (teoricamente)

        if 'space' in keys:
            continueRoutine = False
    ButtonComponent button_next_instruction
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_no < len(messages_instructions)-1:
            instruction_no+=1
    ButtonComponent button_previous_instruction
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_no:
            instruction_no-=1
    KeyboardComponent key_resp_skip_instructions
      allowedKeys = 'space'
      disabled = True
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine cube_test
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        import math
        #from psychopy import event
      Begin Experiment:
        # GENERAL PARAMS --> MODIFY HERE
        cube_width = 0.5
        cube_height = 0.5
        cube_x = 0.4
        cube_y = 0

        stim_start_x = -0.5
        stim_start_y = 0

        # INNER CUBE PARAMS
        inner_cube_width = cube_width
        inner_cube_height = cube_height
        inner_cube_x = cube_x
        inner_cube_y = cube_y

        #OUTER CUBE PARAMS
        outer_cube_width = cube_width*1.1 #110% de inner_cube_widht
        outer_cube_height = cube_height*1.1
        outer_cube_x = cube_x
        outer_cube_y = cube_y

        ### Eliminar linea izquierda --> hago el cuadrado interno mas grande y lo desplazo
        delta_width_left_side = (outer_cube_width - inner_cube_width)/2
        inner_cube_width += delta_width_left_side # Incremento tamaño del borde
        inner_cube_x -= delta_width_left_side/2 #Desplazo a la izda el tamaño incrementado
      Begin Routine:
        theta_radians = math.radians(angulo)
        velocidad_x = velocidad * math.cos(theta_radians)
        velocidad_y = velocidad * math.sin(theta_radians)

        # INITIAL CONFIG & VARIABLE INITIALIZATION
        stim_x = stim_start_x
        stim_y = stim_start_y

        stim_user_x = stim_start_x
        stim_user_y = stim_start_y

        stim_user_predicted_x = stim_start_x
        stim_user_predicted_y = stim_start_y

        error_dist = -1
        error_time = -1
        t_hit = -1
        t_user = -1

        waiting_start = True
        start = False
        hit = False
        stop = False
        position_prediction_made_by_user = False

        t0=0
        right_border_x = 0
        top_border_y = 0
        bottom_border_y = 0

        # EVENT CONFIGURATION
        mouse = event.Mouse(win=win)
      Each Frame:
        ## stim_3: el estimulo controlado por psychopy
        ## stim_user: el estimulo que mueve el usuario con el raton en el momento de posicionarlo
        ## stim_user_prediction: el estimulo posicionado en el marco

        text_5.setText(f"ESTADOS: \nWaiting: {waiting_start:.1f}\nStart: {start:.2f}\nHit: {hit:.2f}\nStop: {stop:.2f}\nprediction_made: {position_prediction_made_by_user:.1f}\n\nMETRICAS:\nt0: {t0:.2f}\nt: {t:.2f}\nAngulo: {angulo:.2f}\nError dist: {error_dist:.2f}\nError tiempo: {error_time:.2f}")

        if waiting_start: # WAITING --> instrucciones + ajustar t0 hasta que empiece la prueba
             text_logs.setText(f"Pulse la barra espaciadora para empezar...")
             error_dist = -1
             t0 = t

        elif start: # START --> mover bola
            displacement_x = (t-t0) * velocidad_x
            displacement_y = (t-t0) * velocidad_y
            stim_x = stim_start_x + displacement_x
            stim_y = stim_start_y + displacement_y # + stim_y +
            stim_user.opacity = 0.0
            stim_user_prediction.opacity = 0.0

        elif hit: # HIT (la bola toca el bore pero no se ve) --> velocidad = 0
            velocidad_x = velocidad_y = 0

        elif stop: # STOP --> now user makes the position prediction
            # Poner el estimulo si y solo si el raton esta en coordenadas del marco
            tolerance = 0.01 # TODO: calcular anchura marco
            mouse_pos = mouse.getPos()
            text_logs.setText(f"Haz click en el borde donde creas que ha impactado la circunferencia...")

            # Condicion para mostrar el estimulo --> solo en los bordes
            if (abs(mouse_pos[0] - right_border_x) <= tolerance) or (abs(mouse_pos[1] - top_border_y) <= tolerance) or (abs(mouse_pos[1] - bottom_border_y) <= tolerance):
                stim_user.opacity = 1.0
                stim_user_x, stim_user_y = mouse_pos[0], mouse_pos[1]

                # EVENTO CLICK RATON
                buttons = mouse.getPressed()
                if buttons[0]:
                    stim_user_predicted_x, stim_user_predicted_y = mouse_pos[0], mouse_pos[1]
                    stim_user_prediction.opacity = 1.0
                    position_prediction_made_by_user = True
                    # Error calculation - euclidean distance between stim_user_prediction and stim_3
                    error_dist = ((stim_user_predicted_x - stim_x) ** 2 + (stim_user_predicted_y - stim_y) ** 2) ** 0.5
            else:
                stim_user.opacity = 0  # Ocultar el estímulo si el ratón no está en el centro

        elif stop and position_prediction_made_by_user:
             text_logs.setText(f"Pulse la barra espaciadora para continuar...")


        # Detectar si stim sale de la pantalla
        win_width, win_height = win.size  # win es el objeto de ventana en PsychoPy
        if stim_x*stim_x > 5 or stim_y*stim_y > 5:
            start = False
            stop = True

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:

            if waiting_start: # Primera pantalla
                start = True
                waiting_start = False

            elif start: # Evento parar --> users time prediction
                stop = True
                start = False
                t_user = t
                #text_logs.setText(f"")
                #t_travel += t - t_event

            elif stop and position_prediction_made_by_user: # Detectar si ha hecho la predicción
                continueRoutine = False # Fin de la rutina
            else:
                text_logs.setText(f"Debes hacer la predicción de posicion antes de continuar!\n Pide ayuda si la necesitas.")


        ####################################################
        ##############____BORDER DETECTION____##############
        ####################################################
        if start:

            # Definir los puntos medios de los bordes del área visible de outer_cube
            # Borde superior
            #top_border_x = outer_pos[0]
            #top_border_y = cube_y + outer_cube_height + outer_size[1]/2
            # Borde inferior
            #bottom_border_x = outer_pos[0]
            #bottom_border_y = outer_pos[1] - outer_size[1]/2
            # Borde derecho
            right_border_x = cube_x + outer_cube_width/2 - (outer_cube_width - inner_cube_width)/2
            top_border_y = cube_y + outer_cube_height/2 - (outer_cube_height - inner_cube_height)/4
            bottom_border_y = cube_y - outer_cube_height/2 + (outer_cube_height - inner_cube_height)/4
            left_border_x = cube_x - outer_cube_width/2

            # Comprobando si stim_3 toca el centro de algún borde
            tolerance = 0.0  # Define qué tan cerca debe estar stim_3 para considerar que toca el borde

            # Verificar contacto con el borde superior
            if top_border_y - stim_y <= tolerance:
                print("Contacto con el borde superior")
                hit = True

            # Verificar contacto con el borde derecho
            if right_border_x - stim_x <= tolerance: #and abs(stim_3_pos[1] - right_border_y) <= tolerance:
                print("Contacto con el borde derecho")
                hit = True

            # Verificar contacto con el borde inferior
            if  stim_y - bottom_border_y <= tolerance:
                print("Contacto con el borde inferior")
                hit = True
                start = False

            if stim_x > left_border_x:
                stim_3.opacity = 0.3
            else:
                stim_3.opacity = 1.0
    PolygonComponent outer_cube
      fillColor = -0.6314, -0.3804, -0.3804
      lineColor = -0.6314, -0.3804, -0.3804
      pos = (outer_cube_x, outer_cube_y)
      shape = rectangle
      size = (outer_cube_width, outer_cube_height)
      startVal [time (s)] = 0.0
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    PolygonComponent inner_cube
      fillColor = white
      pos = (inner_cube_x, inner_cube_y)
      shape = rectangle
      size = (inner_cube_width, inner_cube_height)
      startVal [time (s)] = 0.0
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    PolygonComponent stim_3
      fillColor = -0.6157, 0.5608, -0.6235
      pos [set every frame] = (stim_x, stim_y)
      saveStartStop = False
      shape = circle
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
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    PolygonComponent stim_user
      fillColor = -1.0000, -1.0000, 1.0000
      pos [set every frame] = (stim_user_x, stim_user_y)
      shape = circle
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
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    PolygonComponent stim_user_prediction
      fillColor = 0.0824, -0.6627, 0.7725
      pos [set every frame] = (stim_user_predicted_x, stim_user_predicted_y)
      shape = circle
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.02
      pos [set every frame] = (-0.35, 0.35)
      startVal [time (s)] = 0.0
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    TextComponent text_logs
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ban
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  Routine instructions_II
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    ImageComponent logo_bio_2
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab_2
      image = images/compneuro_horizontal.png
      pos = (0.45, 0.35)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_title_2
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TEST DE PERCEPCIÓN DE VELOCIDAD, ACELERACIÓN Y TRAYECTORIA
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    TextComponent text_instructions_2
      letterHeight = 0.035
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        #text_instructions.alignHoriz='left'
        #text_instructions.wrapWidth=1.0
        instruction_II_no = 0
        messages_instructions_II = ["En la siguiente prueba verás una pelota que entra a una caja. En cada prueba, la velocidad de la bola, ángulo o tamaño de la caja van a cambiar...", "Al igual que antes, en cuanto la bola entra a la caja desaparece. Debes adivinar cuando va a impactar la bola en alguna de las paredes pulsando la barra espaciadora en ese momento...", "Además, después de intentar adivinar cuando va a tocar el borde, debes hacer click en el lugar exacto donde creas que ha tocado la pared. Pullsa la barra espaciadora para empezar la prueba..."]
      Each Frame:
        text_instructions_2.text = messages_instructions_II[instruction_II_no]

        if instruction_II_no == (len(messages_instructions_II) - 1):
            button_next_instruction_2.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction_2.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_II_no == 0:
            button_previous_instruction_2.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction_2.opacity = 1.0
            #button_previous_instruction.status = STARTED

        # End of routine:
        keys = event.getKeys()
        if 'space' in keys:
            continueRoutine = False
    ButtonComponent button_next_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_II_no < len(messages_instructions_II)-1:
            instruction_II_no+=1
    ButtonComponent button_previous_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_II_no:
            instruction_II_no-=1
Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = specs.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('velocidad', 0.1), ('aceleracion', 0), ('anchura_tunel', 100), ('distancia_estimulo_tunel', 0.3), ('velocidad_2', 0.1)]),
      OrderedDict([('intento', 2), ('velocidad', 0.2), ('aceleracion', 0), ('anchura_tunel', 75), ('distancia_estimulo_tunel', 0.4), ('velocidad_2', 0.2)]),
      OrderedDict([('intento', 3), ('velocidad', 0.3), ('aceleracion', 0), ('anchura_tunel', 50), ('distancia_estimulo_tunel', 0.5), ('velocidad_2', 0.3)]),
      OrderedDict([('intento', 4), ('velocidad', 0.4), ('aceleracion', 0), ('anchura_tunel', 35), ('distancia_estimulo_tunel', 0.6), ('velocidad_2', 0.4)]),
      OrderedDict([('intento', 5), ('velocidad', 0.3), ('aceleracion', 0), ('anchura_tunel', 20), ('distancia_estimulo_tunel', 0.7), ('velocidad_2', 0.3)])]
    Routine wait
    Routine start
  LoopTerminator trials_2
  Routine instructions_II
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = cube_speed_angles.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('velocidad', 0.1), ('angulo', 0)]),
      OrderedDict([('velocidad', 0.2), ('angulo', 20)]),
      OrderedDict([('velocidad', 0.3), ('angulo', -20)]),
      OrderedDict([('velocidad', 0.4), ('angulo', 30)]),
      OrderedDict([('velocidad', 0.3), ('angulo', -30)])]
    Routine cube_test
  LoopTerminator trials_3
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = specs_tiro_parabolico.csv
    loopType = sequential
    nReps = 4
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    conditions:
      [OrderedDict([('intento', 1), ('velocidad', 1), ('aceleracion', 0), ('angulo', 45), ('anchura_tunel', 50)]),
      OrderedDict([('intento', 2), ('velocidad', 2), ('aceleracion', 0), ('angulo', 45), ('anchura_tunel', 40)]),
      OrderedDict([('intento', 3), ('velocidad', 3), ('aceleracion', 0), ('angulo', 45), ('anchura_tunel', 30)]),
      OrderedDict([('intento', 4), ('velocidad', 4), ('aceleracion', 0), ('angulo', 45), ('anchura_tunel', 100)])]
    Routine tiro_parabolico
  LoopTerminator trials
