PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = different_noises_test
  keyboardBackend = ioHub
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Routines
  Routine trial
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  Routine noise_0
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    GratingComponent grating
      mask = circle
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      sf = grating_spatial_frequency
      size [set every repeat] = grating_size
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor [set every repeat] = $pollygon_fill_color
      lineColor [set every repeat] = $pollygon_border_color
      shape = circle
      size = pollygon_size
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        # Noise stuff
        from psychopy import core
        noise_timer = None
        showing_noise = False

        flag_answer_registered = False
      Each Frame:
        # LOGS & SLIDER
        if slider.getRating() is not None:
            noise_type = slider.getRating()
        text.setText(f"Noise type: {noise_type}")

        ################################################################################

        keys = event.getKeys()

        if 'space' in keys:
            flag_answer_registered  = True
            event.clearEvents()

        # NOISE RISING EDGE
        if flag_answer_registered and not showing_noise:  # Respuesta registrada y sin ruido: activar ruido
            show_noise(dots_white, dots_black, polygon, grating, noise_type)
            noise_timer             = core.Clock()
            showing_noise           = True
            flag_answer_registered  = False

        # NOISE FALLING EDGE
        if showing_noise and noise_timer.getTime() >= noise_duration:
            showing_noise           = False
            #continueRoutine = False
            # show grating again just in case

        # NO NOISE STATUS
        if not showing_noise:
            hide_noise(dots_white, dots_black, polygon, grating, noise_type)
    DotsComponent dots_white
      coherence = 1.0
      color = 1.0000, 1.0000, 1.0000
      dir = 0.0
      dotLife = 3
      dotSize = noise_dots_size
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = noise_field_size
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    DotsComponent dots_black
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 3
      dotSize = noise_dots_size
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize [set every repeat] = noise_field_size
      nDots = noise_dots
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.025
      pos = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      labels = (0, 1, 2, 3)
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (0, 1, 2, 3)
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  Routine conifg
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        # noise dots config
        noise_dots = 25000
        noise_dots_size = 2
        noise_field_size=[1.75,1]

        grating_size = (0.5,0.5)
        grating_spatial_frequency = 100

        # Pollygon config (for option 1)
        pollygon_size = grating_size
        pollygon_fill_color = 'white'
        pollygon_border_color = 'white'

        response_time = 1
        noise_duration = 1
        noise_type = 3
      Begin Experiment:
        from psychopy import core

        noise_type = 3

        def hide_noise(dots_white, dots_black, polygon, grating, noise_type):
            polygon.setAutoDraw(False)
            dots_white.setAutoDraw(False)
            dots_black.setAutoDraw(False)
            grating.setAutoDraw(True) # posible bug con FFT

        def show_noise(dots_white, dots_black, polygon, grating, noise_type):
            if noise_type == 0:
                polygon.setAutoDraw(False)
                dots_white.setAutoDraw(False)
                dots_black.setAutoDraw(False)
                grating.setAutoDraw(False)
            elif noise_type == 1:
                polygon.setAutoDraw(True)
                dots_white.setAutoDraw(False)
                dots_black.setAutoDraw(False)
            elif noise_type == 2:
                polygon.setAutoDraw(False)
                dots_white.setAutoDraw(True)
                dots_black.setAutoDraw(True)
                grating.setAutoDraw(False)
                dots_white.fieldShape = 'square'
                dots_black.fieldShape = 'square'
                dots_white.setSize(noise_field_size)
                dots_black.setSize(noise_field_size)

            elif noise_type == 3:
                polygon.setAutoDraw(False)
                # Ajusta la forma y el tamaño de los puntos de ruido
                dots_white.fieldShape = 'circle'
                dots_black.fieldShape = 'circle'

                # Asigna el tamaño de 'stim' al ruido
                dots_white.setSize(grating.size)
                dots_black.setSize(grating.size)
                dots_white.setAutoDraw(True)
                dots_black.setAutoDraw(True)
                grating.setAutoDraw(False)
Flow
  Routine conifg
  Routine noise_0
