PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Seleccion_colores_no_repetidos
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import random

        color_1 = [-1, -1, -1]
        color_2 = [-1, -1, -1]
        color_3 = [-1, -1, -1]
        color_4 = [-1, -1, -1]
        color_5 = [-1, -1, -1]
        color_6 = [-1, -1, -1]
        color_7 = [-1, -1, -1]
        color_8 = [-1, -1, -1]
        color_9 = [-1, -1, -1]

        color_list = [color_1, color_2, color_3, color_4, color_5, color_6, color_7, color_8, color_9]

        # Generación de colores --> TODO: creación aleatoria ó carga de CSV para verificar viabilidad de colores
        repeated_color_1 = [0,0,0]
        repeated_color_2 = [-0.3,0.3,0.3]
        repeated_color_3 = [0.7,0.7,0.7]

        #random_color_1 = [0.8,0.8,0.8]
        #random_color_2 = [0.1,0.1,0.1]
        #random_color_3 = [-0.4,0.4,0.4]

        def aplicar_desvio(color, desvio):
            # Aplicar un desvío del 10% a cada componente del color
            return [componente + componente * desvio for componente in color]

        # Desvío del 10%
        desvio = 0.9

        # Actualizar los colores random_color basados en repeated_color con un 10% de desvío
        random_color_1 = aplicar_desvio(repeated_color_1, desvio)
        random_color_2 = aplicar_desvio(repeated_color_2, desvio)
        random_color_3 = aplicar_desvio(repeated_color_3, desvio)

        # Asignación de colores --> asignacion aleatoria

        repeated_colors = [repeated_color_1, repeated_color_1, repeated_color_2, repeated_color_2, repeated_color_3, repeated_color_3]
        random_colors = [random_color_1, random_color_2, random_color_3]

        random.shuffle(repeated_colors)
        random.shuffle(random_colors)

        color_1, color_2 = repeated_colors[:2]
        color_3, color_4 = repeated_colors[2:4]
        color_7, color_8 = repeated_colors[4:6]

        color_5 = random_colors[0]
        color_6 = random_colors[1]
        color_9 = random_colors[2]
      Begin Routine:
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    PolygonComponent polygon
      fillColor [set every frame] = $color_1
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.4, 0.35)
      shape = regular polygon...
      size = [0.25, 0.25]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_1
      fillColor [set every frame] = $color_2
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.4, 0.35)
      shape = regular polygon...
      size = [0.25, 0.25]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor [set every frame] = $color_3
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, 0.35)
      shape = regular polygon...
      size = [0.25, 0.25]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor [set every frame] = $color_4
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.4, 0)
      shape = regular polygon...
      size = [0.25, 0.25]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_4
      fillColor [set every frame] = $color_5
      lineColor = -1.0000, -1.0000, -1.0000
      shape = regular polygon...
      size = [0.25, 0.25]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_5
      fillColor [set every frame] = $color_6
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.4, 0)
      shape = regular polygon...
      size = [0.25, 0.25]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_6
      fillColor [set every frame] = $color_7
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.4, -0.35)
      shape = regular polygon...
      size = [0.25, 0.25]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_7
      fillColor [set every frame] = $color_8
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.4, -0.35)
      shape = regular polygon...
      size = [0.25, 0.25]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_8
      fillColor [set every frame] = $color_9
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, -0.35)
      shape = regular polygon...
      size = [0.25, 0.25]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
