PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = pupillary_light_reflex
  keyboardBackend = ioHub
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Routines
  Routine adaptation_period
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    TextComponent text_countdown
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = adaptation_time
      text [set every frame] = $str(adaptation_time-int(t))
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  Routine red_flash
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        win.color = "red"
        thisExp.addData("redTime", time.time())
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flash_time
      text [set every frame] = $str(flash_time-int(t))
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  Routine settings
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    CodeComponent GLOBAL_VARIABLES_AND_FUNCTIONS
      Code Type = Py
      Begin Experiment:
        import time
        from datetime import datetime

        #thisExp.addData("baseTime", time.time())

        adaptation_time = 10#10*60 # 10 MINUTES
        flash_time = 1 # 1 s
        rest_time = 10 # 30 s
      Begin Routine:
        thisExp.addData("baseTime", time.time())
  Routine rest_period
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        win.color = "black"
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = rest_time
      text [set every frame] = $str(rest_time-int(t))
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  Routine blue_flash
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flash_time
      text [set every frame] = $str(flash_time-int(t))
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        win.color = "blue"
  Routine white_flash
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        win.color = "white"
        thisExp.addData("redTime", time.time())
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = flash_time
      text [set every frame] = $str(flash_time-int(t))
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Flow
  Routine settings
  Routine adaptation_period
  Routine white_flash
  Routine rest_period
  Routine red_flash
  Routine rest_period
  Routine blue_flash
  Routine rest_period
