PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = 2024.1.0
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = pupillary_light_reflex
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent GLOBAL_VARIABLES_AND_FUNCTIONS
      Code Type = Py
      Begin Experiment:
        adaptation_time = 10*60 # 10 MINUTES
        flash_time = 1 # 1s
        rest_time = 30 # 30 s
  Routine adaptation_period
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    TextComponent text_countdown
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(adaptation_time-int(t))
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Flow
  Routine trial
  Routine adaptation_period
