PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = contrast_sensitivity_test
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import csv

        # Variables estaticas
        starting_value = 80
        step_size = 5
        stop_reversals = 10

        # Inicializacion de variables que posteriormente cambian
        saturation = starting_value
        step = step_size
        reversals = 0
        last_direction = None
        reversal_saturations = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None
      Begin Routine:
        frequency = 0.01
        size = 500
        c1_hsv = (360, 50, 100)
        c2_hsv = (360, saturation, 100)

            #logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor
        save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'n' in keys: # El paciente no ve el eestimulo
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    saturation = max(0, saturation - step)
                    if last_direction == "up":
                        reversals += 1
                        reversal_saturations.append(saturation)
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no ve el estimulo
                saturation += step  # Aumentar el contraste
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_saturations.append(saturation)
                last_direction = "up"

            # Actualizar el color del estímulo

            #grating.contrast = contrast

            c2_hsv = (360, saturation, 100)

        #logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor

            save_gabor_patch_image(frequency,
                               size,
                               normalizar_rgb(hsv_a_rgb(*c1_hsv)),
                               normalizar_rgb(hsv_a_rgb(*c2_hsv)))

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'saturation': saturation,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla para aumentar la granularidad del test
            if (reversals % 3 == 0) and reversals != 0:
                step = step/2
                print(f"New step = {step}")

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                filename = './data/trials_color_data.csv'
                with open(filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'saturation', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        logs.text = f"Step Size = {step_size}"
    KeyboardComponent key_resp
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    CodeComponent gabor_generator
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        from PIL import Image
        import matplotlib.pyplot as plt


        def save_gabor_patch_image(frequency, size, c1, c2):
            amp, f = generate_gabor_patch(frequency, size)

            # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia
            c1 = np.array(c1)
            c2 = np.array(c2)

            # Calcular los valores de color para el parche
            im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))

            # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo
            alpha_channel = f

            # Combinar los valores RGB con el canal alfa para crear una imagen RGBA
            im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))

            # Convertir a imagen
            im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')
            im.save(f"./images/custom_stim.png")

        def generate_gabor_patch(frequency, size):
            im_range = np.arange(size)
            x, y = np.meshgrid(im_range, im_range)
            dx = x - size // 2
            dy = y - size // 2
            t = np.arctan2(dy, dx)
            r = np.sqrt(dx ** 2 + dy ** 2)
            x = r * np.cos(t)
            y = r * np.sin(t)

            # Transición brusca para los colores (líneas) en el patrón Gabor
            amp = np.where(np.cos(2 * np.pi * (x * frequency)) >= 0, 1, 0)
            f = np.where(r <= size // 2, 1, 0)

            return amp, f
        def hsv_a_rgb(h, s, v):
            """
            Convierte un color desde HSV a RGB.

            Parámetros:
            h (float): Matiz (Hue) en grados (0-360).
            s (float): Saturación (Saturation) como porcentaje (0-100).
            v (float): Valor (Value) como porcentaje (0-100).

            Retorna:
            tuple: Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.
            """
            h = h % 360
            s /= 100
            v /= 100

            c = v * s
            x = c * (1 - abs((h / 60) % 2 - 1))
            m = v - c

            if 0 <= h < 60:
                r, g, b = c, x, 0
            elif 60 <= h < 120:
                r, g, b = x, c, 0
            elif 120 <= h < 180:
                r, g, b = 0, c, x
            elif 180 <= h < 240:
                r, g, b = 0, x, c
            elif 240 <= h < 300:
                r, g, b = x, 0, c
            else:
                r, g, b = c, 0, x

            r = (r + m) * 255
            g = (g + m) * 255
            b = (b + m) * 255

            return int(round(r)), int(round(g)), int(round(b))


        def normalizar_rgb(rgb):
            """
            Normaliza una tupla de valores RGB dividiendo cada componente por 255.

            Parámetros:
            rgb (tuple): Una tupla con valores (R, G, B), cada uno en el rango de 0 a 255.

            Retorna:
            tuple: Una tupla con valores normalizados (R, G, B), cada uno en el rango de 0 a 1.
            """
            return tuple(component / 255 for component in rgb)
    ImageComponent image_2
      image [set every frame] = .\images\custom_stim.png
      ori = 20
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine gabor_generator
    RoutineSettingsComponent gabor_generator
      disabled = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        from PIL import Image
        import matplotlib.pyplot as plt


        def save_gabor_patch_image(frequency, size, c1, c2):
            amp, f = generate_gabor_patch(frequency, size)

            # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia
            c1 = np.array(c1)
            c2 = np.array(c2)

            # Calcular los valores de color para el parche
            im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))

            # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo
            alpha_channel = f

            # Combinar los valores RGB con el canal alfa para crear una imagen RGBA
            im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))

            # Convertir a imagen
            im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')
            im.save(f"./images/custom_stim.png")

        def generate_gabor_patch(frequency, size):
            im_range = np.arange(size)
            x, y = np.meshgrid(im_range, im_range)
            dx = x - size // 2
            dy = y - size // 2
            t = np.arctan2(dy, dx)
            r = np.sqrt(dx ** 2 + dy ** 2)
            x = r * np.cos(t)
            y = r * np.sin(t)

            # Transición brusca para los colores (líneas) en el patrón Gabor
            amp = np.where(np.cos(2 * np.pi * (x * frequency)) >= 0, 1, 0)
            f = np.where(r <= size // 2, 1, 0)

            return amp, f
      Begin Routine:
        import random

        def random_color():
            return (random.random(), random.random(), random.random())

        def random_frequency():
            return random.uniform(0.01, 0.1)

        # Parámetros aleatorios
        frequency = random_frequency()
        size = 500
        c1 = random_color()
        c2 = random_color()

        logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor
        save_gabor_patch_image(frequency, size, c1, c2)
    ImageComponent image
      image [set every repeat] = .\images\custom_stim.png
      ori = 20
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent logs_2
      letterHeight = 0.025
      pos = (0.6, 0.35)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine gabor_generator
