PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 2
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  expName = contrast_sensitivity_test
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import csv

        # Variables estaticas
        starting_value = 0.1
        step_size = 0.01
        stop_reversals = 10

        # Inicializacion de variables que posteriormente cambian
        contrast = starting_value
        step = step_size
        reversals = 0
        last_direction = None
        reversal_contrasts = []
        correct_responses = 0
        trials = []

        # Para almacenar las respuestas del participante
        response = None
      Begin Routine:
        grating.contrast = contrast
      Each Frame:
        keys = event.getKeys()

        if 's' in keys: # El paciente ve el estimulo
            response = True
        elif 'n' in keys: # El paciente no ve el eestimulo
            response = False

        # Lógica del staircase
        if response is not None:
            if response:  # Respuesta correcta: el paciente ve el estimulo
                correct_responses += 1
                if correct_responses == 2:  # Después de 2 respuestas correctas consecutivas
                    correct_responses = 0
                    contrast = max(0, contrast - step)  # Disminuir el contraste
                    #if last_direction == "up":
                    #    reversals += 1
                    #    reversal_contrasts.append(contrast)
                    last_direction = "down"
            else:  # Respuesta incorrecta: el paciente no ve el estimulo
                contrast += step  # Aumentar el contraste
                correct_responses = 0
                if last_direction == "down":
                    reversals += 1
                    reversal_contrasts.append(contrast)
                    # Regla para aumentar la granularidad del test
                    if (reversals % 3 == 0) and reversals != 0:
                        step = step/2
                        print(f"Reversals = {reversals}; New step = {step}")
                        last_direction = "up"
                    else:
                        print('Reversal detected ({reversals})')

            # Actualizar el contraste del estímulo
            grating.contrast = contrast

            # Registrar la información del ensayo
            trials.append({
                'trial': len(trials) + 1,
                'contrast': contrast,
                'response': response,
                'reversals': reversals
            })

            # Restablecer la respuesta para el siguiente ensayo
            response = None

            # Regla de detencion
            if reversals >= stop_reversals:
                print(trials)
                # almaceno trials en 'data' para su posterior analisis
                filename = './data/trials_data.csv'
                with open(filename, mode='w', newline='') as file:
                    writer = csv.DictWriter(file, fieldnames=['trial', 'contrast', 'response', 'reversals'])
                    writer.writeheader()
                    writer.writerows(trials)

                continueRoutine = False

        #########################################################
        #############____________LOGS_________###################
        #########################################################
        logs.text = f"Step Size = {step}"
    KeyboardComponent key_resp
      allowedKeys = 's','n'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent logs
      letterHeight = 0.025
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    GratingComponent grating
      mask = gauss
      saveStartStop = False
      sf = 15
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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Flow
  Routine trial
